config:
  title: Aquarium SARS-CoV-2 detection
  description: Aquarium protocols for molecular diagnostics of SARS-CoV-2 using PCR and RT-qPCR
  copyright: University of Washington
  version: 0.0.2
  authors: [{name: Devin Strickland, affiliation: University of Washington}, {name: Rita Chen, affiliation: Boston University}, {name: Dany Fu, affiliation: Boston University}]
  maintainer: {name: Devin Strickland, email: strcklnd@uw.edu}
  acknowledgements: [{name: Justin Vrana, affiliation: University of Washington}, {name: Nuttada Panpradist, affiliation: University of Washington}, {name: Ben Keller, affiliation: University of Washington}, {name: Barry Lutz, affiliation: University of Washington}, {name: Rob Moseley, affiliation: Duke University}, {name: Steve Haase, affiliation: Duke University}]
  github: {user: dvnstrcklnd, repo: aq-covid19-test, organization: klavinslab}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
sample_types:
  - {name: RNA, description: A sample of RNA}
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object_types:
  - {name: Lyophilized RNA, description: Lyophilized RNA, handler: sample_container, unit: RNA, release_method: return, sample_type_name: RNA}
  - {name: Purified RNA in 1.5 mL tube, description: Purified RNA in 1.5 mL tube, handler: sample_container, unit: RNA, release_method: return, prefix: M80, sample_type_name: RNA}
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operation_type: Aliquot Positive Template
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Template, sample_types: [RNA], object_types: [Lyophilized RNA], routing: T}
  - {ftype: sample, role: output, name: Template, sample_types: [RNA], object_types: [Purified RNA in 1.5 mL tube], routing: T}
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protocol:
# Aliquot Positive Template Protocol
# Written By Rita Chen 2020-05-04

# 2019-nCoV Positive Control (nCoVPC) Preparation:
# 1) Precautions: This reagent should be handled with caution in a dedicated
# nucleic acid handling area to prevent possible contamination. Freeze-thaw
# cycles should be avoided. Maintain on ice when thawed.
# 2) Resuspend dried reagent in each tube in 1 mL of nuclease-free water to
# achieve the proper concentration. Make single use aliquots (approximately 30
# L) and store at less than and equal to -70C.
# 3) Thaw a single aliquot of diluted positive control for each experiment and
# hold on ice until adding to plate. Discard any unused portion of the aliquot.

class Protocol

  def main
    # 1. Get 33 1.5 mL tube for each operation
    get_tubes(operations.length)
    operations.retrieve

    # 2. For each Lyophilized Postive Control, resuspend in 1 mL of
    # nuclease-free waterand, aliquot 33 use aliquots (approximately
    # 30 L) and store at less than and equal to -70C.

    # Group the operations by the input reagent
    ops_by_input = operations.group_by {|op| op.input("Template").item}
    ops_by_input.each do |lyophilized_RNA, ops|
      label_and_locate_output(ops)
    end

    suspend_lyophilized_RNA(operations)
    keep_tubes = [] #Empty array for storing single use aliquots
    
    ops_by_input.each do |lyophilized_RNA, ops|
      keep_tubes.push(make_aliquots(ops))
    end
    
    prepare_plating(keep_tubes)
    
    # 3. Thaw a single aliquot of diluted positive control for each
    # experiment and hold on ice until adding to plate.
    # Discard any unused portion of the aliquot.
    operations.store(interactive: true, io: "output", method: "boxes")
  end

  # Get 33 1.5 mL tubes per dried positive control
  #
  # @param count [Integer] the number of operations
  def get_tubes(count)
    show do
      title "Get new 1.5 mL tubes"
      check "Please get #{count*33} 1.5 mL tubes"
    end
  end

  # Label the tubes so that the same reagents have consecutive IDs
  # And move the output tubes to the right storage locations
  #
  # @param operations [OperationList] The list of operations
  def label_and_locate_output(operations)
    operations.make

    #Declare references to output objects
    operations.each do |op|
      op.output("Template").item.associate :volume, 30
      op.output("Template").item.save
      
      output_RNA = op.output("Template").sample
      for i in 0..31
        new_aliquot = output_RNA.make_item("Purified RNA in 1.5 mL tube")
        new_aliquot.associate :volume, 30
        new_aliquot.save
        # Associated output RNA with a new location wizard for storage of
        # plasmids and fragments, M80P (for DAMP)
        link_output_item(op, output_RNA, new_aliquot)
      end
    end
  end
  
  # Manually link the item to the operation as an output
  #
  # @param op [Operation] the operation that creates the items
  # @param sample [Sample] the sample of the item
  # @param item [Item] the item that is created
  def link_output_item(op, sample, item)
    fv = FieldValue.new(
      name: "Template", 
      child_item_id: item.id,
      child_sample_id: sample.id, 
      role: "output",
      parent_class: "Operation", 
      parent_id: op.id,
      field_type_id: op.output("Template").field_type.id
    )
    fv.save
  end

  #Performs the resuspension protocol for a list of operations
  #that all use the given lyophilized_RNA input.
  #
  # @param suspend_lyophilized_RNA [Item] the lyophilized_RNA
  # @param operations     [OperationList] the list of operations
  def suspend_lyophilized_RNA(operations)
    operations.make

    show do 
      title "Resuspend Positive Template"
      warning "This reagent should be handled with caution in a dedicated\
      nucleic acid handling area to prevent possible contamination."
      warning "Freeze-thaw cycles should be avoided. Maintain on ice when\
      thawed."
      check "Resuspend dried Lyophilized Postive Control RNA in each tube\
      in 1 mL of nuclease-free water to achieve the proper concentration."
    end
  end

  #Performs the aliquote protocol for a list of operations
  #that all use the given lyophilized_RNA input.
  #
  # @param make_aliquots [Item] the lyophilized_RNA
  # @param operations     [OperationList] the list of operations
  def make_aliquots(operations)
    last_tube_id = "" #Empty string for storing item id of single use aliquot
    operations.each do |op|
      input_RNAs = Array.new(33, op.input("Template").item.id)
      aliquot_tubes = op.outputs().map{|output| output.item.id}
      transfer_table = Table.new
              .add_column("Lyophilized RNA", input_RNAs)
              .add_column("Output RNA Aliquot", aliquot_tubes)

      show do
        title "Aliquot Single Used Aliquot Positive Template"
        check "Make single use aliquot by transfering 30 L of the diluted\
        postive control into individual 1.5 mL tubes and label it with the\
        proper item ID."
        check "Discard the empty input tube."
        table transfer_table
      end
    
      # Discard the input
      op.input("Template").item.mark_as_deleted

      # Retrieve the last item of the single use aliquot
      last_tube_id = aliquot_tubes[-1]
    end
    return last_tube_id
  end
  
  #Prepare for plating protocol for a list of operations
  #that all use the given Purified RNA in 1.5 mL tube output.
  #
  # @param prepare_plating [Item] the lyophilized_RNA
  # @param operations     [OperationList] the list of operations
  def prepare_plating(keep_tubes)
    show do
      title "Preparation of Single Aliquot for Plating"
      warning "This reagent should be handled with caution in a dedicated\
      nucleic acid handling area to prevent possible contamination."
      warning "Freeze-thaw cycles should be avoided. Maintain on ice when\
      thawed."
      # Retrieve the last item of the single use aliquot
      check "Thaw a single aliquot of diluted positive control\
      #{keep_tubes} for each experiment and hold on ice until\
      adding to plate."
      check "Discard any unused portion of the aliquot."
    end
    
    # Don't store the single aliquot being used during plating
    keep_tubes.each do |id| Item.find(id).mark_as_deleted end
  end
end

sample_types:
  - {name: Primer Mix, description: Primer Mix}
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object_types:
  - {name: Lyophilized Primer Mix, description: Lyophilized Primer Mix, handler: sample_container, unit: Primer Mix, release_method: return, sample_type_name: Primer Mix}
  - {name: Primer Mix Aliquot, description: Primer Mix Aliquot, handler: sample_container, unit: Primer Mix, release_method: return, prefix: M20, sample_type_name: Primer Mix}
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operation_type: Aliquot Primer/Probe
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Primer Set, sample_types: [Primer Mix], object_types: [Lyophilized Primer Mix], routing: P}
  - {ftype: sample, role: output, name: Primer Set, sample_types: [Primer Mix], object_types: [Primer Mix Aliquot], routing: P}
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protocol:
# frozen_string_literal: true

# This is a default, one-size-fits all protocol that shows how you can
# access the inputs and outputs of the operations associated with a job.
# Add specific instructions for this protocol!

class Protocol

  def main

    operations.retrieve.make

    tin  = operations.io_table 'input'
    tout = operations.io_table 'output'

    show do
      title 'Input Table'
      table tin.all.render
    end

    show do
      title 'Output Table'
      table tout.all.render
    end

    operations.store

    {}

  end

end

sample_types:
  - {name: Respiratory Specimen, description: Incoming sample for testing}
    - {name: Tracking ID, ftype: string, required: true}
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object_types:
  - {name: Nasopharyngeal Swab, description: Nasopharyngeal Swab, handler: sample_container, unit: each, release_method: return, prefix: M80, sample_type_name: Respiratory Specimen}
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operation_type: Extract RNA
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Specimen, sample_types: [Respiratory Specimen], object_types: [Nasopharyngeal Swab], routing: S}
  - {ftype: sample, role: output, name: Specimen, sample_types: [RNA], object_types: [Purified RNA in 1.5 mL tube], routing: T}
  - {ftype: string, role: input, name: Method, choices: QIAamp DSP Viral RNA Mini Kit,Alternative Method}
  - {ftype: json, role: input, name: Options}
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protocol:
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/Units'
needs 'Standard Libs/Debug'
needs 'RNAExtractionKits/RNAExtractionKits'

# Extract RNA Protocol
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include PlanParams
  include Units
  include Debug
  include RNAExtractionKits

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      rna_extraction_kit: TestRNAExtractionKit::NAME
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      sample_volume: { qty: 100, units: MICROLITERS }
    }
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug

    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    set_kit(name: @job_params[:rna_extraction_kit])

    sample_volumes = get_options(operations: operations, key: :sample_volume)
    if sample_volumes.uniq.length == 1
      run_rna_extraction_kit(
        operations: operations,
        sample_volume: sample_volumes.first
      )
    else
      run_rna_extraction_kit(
        operations: operations,
        use_operations: true
      )
    end

    operations.store

    {}
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

sample_types:
  - {name: qPCR Reaction, description: qPCR Reaction}
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object_types:
  - {name: 96-well qPCR Reaction, description: 96-well qPCR Reaction, handler: sample_container, unit: qPCR Reaction, release_method: return, sample_type_name: qPCR Reaction}
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operation_type: Prepare RT-qPCR Plate
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Template, sample_types: [RNA], object_types: [Purified RNA in 1.5 mL tube], array: true, routing: T}
  - {ftype: sample, role: output, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Reaction]}
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protocol:
# frozen_string_literal: true

# This is a default, one-size-fits all protocol that shows how you can
# access the inputs and outputs of the operations associated with a job.
# Add specific instructions for this protocol!

class Protocol

  def main

    operations.retrieve.make

    tin  = operations.io_table 'input'
    tout = operations.io_table 'output'

    show do
      title 'Input Table'
      table tin.all.render
    end

    show do
      title 'Output Table'
      table tout.all.render
    end

    operations.store

    {}

  end

end

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operation_type: Run qPCR
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Reaction], routing: P}
  - {ftype: json, role: input, name: Options}
  - {ftype: sample, role: output, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Reaction], routing: P}
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protocol:
# frozen_string_literal: true

needs 'PCR Libs/PCRComposition'
needs 'PCR Libs/PCRProgram'
needs 'Thermocyclers/Thermocyclers'
needs 'Standard Libs/PlanParams'
needs 'Standard Libs/Debug'

# Protocol for loading samples into a qPCR thermocycler and running it
#
# @author Devin Strickland <strcklnd@uw.edu>
# @todo Decide whether this is actually qPCR specific
class Protocol
  include ThermocyclerHelper
  include PlanParams
  include Debug

  INPUT_REACTIONS = 'qPCR Reactions'

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      thermocycler_model: TestThermocycler::MODEL,
      program_name: 'CDC_TaqPath_CG',
      qpcr: true
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {}
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug

    @job_params = update_job_params(
      operations: operations,
      default_job_params: default_job_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    composition = PCRCompositionFactory.build(
      program_name: @job_params[:program_name]
    )
    program = PCRProgramFactory.build(
      program_name: @job_params[:program_name],
      volume: composition.volume
    )
    thermocycler = ThermocyclerFactory.build(
      model: @job_params[:thermocycler_model]
    )

    set_up_program(
      thermocycler: thermocycler,
      program: program,
      composition: composition,
      qpcr: @job_params[:qpcr]
    )

    load_plate_and_start_run(
      thermocycler: thermocycler,
      items: operations.map { |op| op.input(INPUT_REACTIONS).item },
      experiment_filename: experiment_filename
    )

    export_measurements(thermocycler: thermocycler)

    operations.store

    {}
  end

  ########## NAMING METHODS ##########

  # Constructs a name for the experiment file.
  #
  # @return [String]
  def experiment_filename
    date = DateTime.now.strftime('%Y-%m-%d')
    "#{date}_Job_#{job.id}"
  end

  # Gets the currently active `Job`
  #
  # @return [Job]
  def job
    operation_ids = operations.map(&:id)
    ja_ids = JobAssociation.where(operation_id: operation_ids).map(&:job_id).uniq
    jobs = Job.find(ja_ids).select(&:active?)
    raise ProtocolError, 'Cannot resolve the current Job' if jobs.length > 1

    jobs.last
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
    # [1..3].each do |i|
    #   s = Sample.find_by_name("Test qPCR Reaction #{i}")
    #   add_operation
    #     .with_input('qPCR Reactions', s)
    #     .with_property('Options', '{}')
    #     .with_output('qPCR Reactions', s)
    # end
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end
