config:
  title: covid19-test
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.2
sample_types:
  - {name: qPCR Reaction, description: qPCR Reaction}
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object_types:
  - {name: 96-well qPCR Plate, description: 96-well qPCR Reaction, handler: collection, unit: qPCR Reaction, release_method: return, rows: 8, columns: 12, sample_type_name: qPCR Reaction}
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operation_type: Add No Template Control
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: sample, role: output, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: json, role: input, name: Options}
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documentation:
Adds no-template control (NTC) samples to the input collection,
typically a 96-well plate. For example, according to the CDC protocol, pipettes 
5 uL of nuclease-free water into the NTC sample wells (the first column of sample wells).

#### Job Options
None

#### Operation Options
`program_name [String]` The protocol to be followed, based on the qPCR
master mix used. Defaults to CDC_TaqPath_CG. For other supported protocols, see
[this document](https://github.com/aquariumbio/pcr-models/blob/master/pcr_libs/libraries/pcrcompositiondefinitions/source.rb).

`group_size [Int]` The number of NTC samples to add for each primer group.
Defaults to 3.

`layout_method [String]` The method to use in laying out the plate. Defaults to `cdc_sample_layout`.

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protocol:
# typed: false
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'
needs 'Microtiter Plates/MicrotiterPlates'

# Protocol for setting up a master mix plate for RT-qPCR
# @note Instructions adapted from the CDC COVID-19 detection protocol
#   https://www.fda.gov/media/134922/download
#
# 12) Prior to moving to the nucleic acid handling area, prepare the
#   No Template Control (NTC) reactions for column #1 in the
#   assay preparation area.
#
# 13) Pipette 5 uL of nuclease-free water into the NTC sample wells
#   (Figure 2, column 1). Securely cap NTC wells before proceeding.
#
# 14) Cover the entire reaction plate and move the reaction plate to
#   the specimen nucleic acid handling area.
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include DiagnosticRTqPCRHelper

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      program_name: 'CDC_TaqPath_CG',
      group_size: 3,
      layout_method: 'cdc_sample_layout'
    }
  end

  ########## MAIN ##########

  def main
    setup_test_plates(operations: operations, method: :master_mix) if debug

    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    prepare_materials(operations: operations)

    operations.each do |op|
      op.pass(PLATE)
      add_no_template_controls(operation: op)
    end

    operations.store

    {}
  end

  # Prepare workspace and materials
  #
  # @todo Make this handle master mix or enzyme with separate
  #   buffer dynamically
  # @param operations [OperationList]
  # @return [void]
  def prepare_materials(operations:)
    show_prepare_workspace
    build_ntc_compositions(operations: operations)
    retrieve_by_compositions(operations: operations)
  end

  # Add the no template controls to an Operation's putput collection
  #
  # @param operation [Operation]
  # @return [void]
  def add_no_template_controls(operation:)
    # Group_Size and Program name are attributes of the plate
    # and should be associated to the plate from Prepare Master Mix
    # This may not work because group size is different depending on whether
    #   talking about samples or primers
    # group_size = op.input(PLATE).collection.get(GROUP_SIZE_KEY)
    # program_name = op.input(PLATE).collection.get(COMPOSITION_NAME_KEY)

    collection = operation.output(PLATE).collection
    composition = operation.temporary[:compositions].first

    microtiter_plate = MicrotiterPlateFactory.build(
      collection: collection,
      group_size: operation.temporary[:options][:group_size],
      method: operation.temporary[:options][:layout_method]
    )

    layout_group = microtiter_plate.next_empty_group(key: TEMPLATE_KEY)

    show_add_ntc(
      collection: collection,
      volume: composition.water.qty_display,
      layout_group: layout_group
    )

    composition.template.added = true

    microtiter_plate.associate_provenance_group(
      group: layout_group,
      key: TEMPLATE_KEY,
      data: added_component_data(composition: composition)
    )

    show_result(collection: collection) if debug
    inspect_data_associations(collection: collection) if debug
  end

  # Instruct technician to add the no template control samples to the plate
  #
  # @param collection [Collection]
  # @param volume [Fixnum]
  # @param layout_group [Array<Array<Fixnum>>]
  # @return [void]
  def show_add_ntc(collection:, volume:, layout_group:)
    show do
      title "Pipet No Template Control (NTC) samples into plate #{collection}"

      note "Pipet #{volume} of #{WATER} into the indicated wells of" \
        " plate #{collection}"
      table highlight_collection_rc(collection, layout_group, check: true)
    end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    ops = add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

sample_types:
  - {name: RNA, description: A sample of RNA}
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object_types:
  - {name: Lyophilized RNA, description: Lyophilized RNA, handler: sample_container, unit: RNA, release_method: return, sample_type_name: RNA}
  - {name: Purified RNA in 1.5 mL tube, description: Purified RNA in 1.5 mL tube, handler: sample_container, unit: RNA, release_method: return, prefix: M80, sample_type_name: RNA}
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operation_type: Aliquot Positive Template
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Template, sample_types: [RNA], object_types: [Lyophilized RNA], routing: T}
  - {ftype: sample, role: output, name: Template, sample_types: [RNA], object_types: [Purified RNA in 1.5 mL tube], routing: T}
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protocol:
# Aliquot Positive Template
# Written By Rita Chen 2020-05-04
# Updated by Dany Fu 2020-06-01

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'

# 2019-nCoV Positive Control (nCoVPC) Preparation:
# 1) Precautions: This reagent should be handled with caution in a dedicated
# nucleic acid handling area to prevent possible contamination. Freeze-thaw
# cycles should be avoided. Maintain on ice when thawed.
# 2) Resuspend dried reagent in each tube in 1 mL of nuclease-free water to
# achieve the proper concentration. Make single use aliquots (approximately 30
# uL) and store at less than and equal to -70C.
# 3) Thaw a single aliquot of diluted positive control for each experiment and
# hold on ice until adding to plate. Discard any unused portion of the aliquot.
class Protocol
  include DiagnosticRTqPCRHelper

  VOL_WATER = { qty: 1, units: MILLILITERS }.freeze
  VOL_SUSPENSION = { qty: 30, units: MICROLITERS }.freeze
  OUTPUT_ITEMS_NUM = { qty: 33, units: TUBE_MICROFUGE }.freeze

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {}
  end

  ########## MAIN ##########

  def main
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    update_operation_params(
      operations: operations,
      default_operation_params: default_operation_params
    )

    # 1. Get 33 1.5 mL tube for each operation
    get_tubes(count: operations.length)
    operations.retrieve

    # 2. For each Lyophilized Postive Control, resuspend in 1 mL of
    # nuclease-free waterand, aliquot 33 use aliquots (approximately
    # 30 uL) and store at less than and equal to -70C.
    save_output(ops: operations)

    suspend_lyophilized_RNA
    keep_tubes = [] # Empty array for storing single use aliquots

    # Group the operations by the input reagent
    ops_by_input = operations.group_by { |op| op.input(TEMPLATE).item }
    ops_by_input.each do |lyophilized_rna, ops|
      keep_tubes.push(make_aliquots(ops: ops, lyophilized_rna: lyophilized_rna))
    end

    prepare_plating(keep_tubes: keep_tubes)

    # 3. Thaw a single aliquot of diluted positive control for each
    # experiment and hold on ice until adding to plate.
    # Discard any unused portion of the aliquot.
    operations.store(interactive: true, io: 'output', method: 'boxes')
  end

  # Get 33 1.5 mL tubes per dried positive control
  #
  # @param count [Integer] the number of operations
  def get_tubes(count:)
    show do
      title "Get new #{TUBE_MICROFUGE}"
      check "Please get #{count * OUTPUT_ITEMS_NUM[:qty]} #{TUBE_MICROFUGE}"
    end
  end

  # Label the tubes so that the same reagents have consecutive IDs
  # And move the output tubes to the right storage locations
  # @param operations [OperationList] The list of operations
  def save_output(ops:)
    ops.make

    # Declare references to output objects
    ops.each do |op|
      op.output(TEMPLATE).item.associate :volume, VOL_SUSPENSION[:qty]

      output_RNA = op.output(TEMPLATE).sample
      # makes 32 additional aliquots per op
      (OUTPUT_ITEMS_NUM[:qty] - 1).times do
        new_aliquot = output_RNA.make_item('Purified RNA in 1.5 mL tube')
        new_aliquot.associate :volume, VOL_SUSPENSION[:qty]
        link_output_item(operation: op, sample: output_RNA, item: new_aliquot)
      end
    end
  end

  # Manually link the item to the operation as an output
  #
  # @param op [Operation] the operation that creates the items
  # @param sample [Sample] the sample of the item
  # @param item [Item] the item that is created
  def link_output_item(operation:, sample:, item:)
    fv = FieldValue.new(
      name: TEMPLATE,
      child_item_id: item.id,
      child_sample_id: sample.id,
      role: 'output',
      parent_class: 'Operation',
      parent_id: operation.id,
      field_type_id: operation.output(TEMPLATE).field_type.id
    )
    fv.save
  end

  # Performs the resuspension protocol for a list of operations
  # that all use the given lyophilized_RNA input.
  def suspend_lyophilized_RNA()
    show do
      title 'Resuspend Positive Template'
      warning "This reagent should be handled with caution in a dedicated \
      nucleic acid handling area to prevent possible contamination."
      warning "Freeze-thaw cycles should be avoided. Maintain on ice when \
      thawed."
      check "Resuspend dried Lyophilized Postive Control RNA in each tube in \
      #{qty_display(VOL_WATER)} of nuclease-free water to achieve the \
      proper concentration."
    end
  end

  # Performs the aliquote protocol for a list of operations
  # that all use the given lyophilized_RNA input.
  # @param make_aliquots [Item] the lyophilized_RNA
  # @param operations     [OperationList] the list of operations
  def make_aliquots(ops:, lyophilized_rna:)
    last_tube = nil

    ops.each do |op|
      input_rnas = Array.new(OUTPUT_ITEMS_NUM[:qty], lyophilized_rna)
      aliquot_items = op.outputs.map(&:item)
      table = Table.new
                   .add_column('Lyophilized RNA', input_rnas.map(&:to_s))
                   .add_column('Output RNA Aliquot', aliquot_items.map(&:to_s))

      show do
        title 'Aliquot Single Used Aliquot Positive Template'
        check "Make single use aliquot by transfering \
        #{qty_display(VOL_SUSPENSION)} of the diluted postive control into \
        individual #{TUBE_MICROFUGE} and label it with the proper item ID."
        check 'Discard the empty input tube'
        table table
      end

      add_aliquot_provenance(
        stock_item: lyophilized_rna,
        aliquot_items: aliquot_items
      )

      lyophilized_rna.mark_as_deleted

      if debug
        aliquot = aliquot_items.last
        inspect(lyophilized_rna.associations, lyophilized_rna.id)
        inspect(aliquot.associations, aliquot.id)
      end

      # Retrieve the last item of the single use aliquot
      last_tube = aliquot_items.last
    end
    last_tube.id
  end

  # Prepare for plating protocol for a list of operations
  # that all use the given Purified RNA in 1.5 mL tube output.
  # @param keep_tubes [Item] Items to be kept on bench for immediate use
  def prepare_plating(keep_tubes:)
    show do
      title 'Preparation of Single Aliquot for Plating'
      warning "This reagent should be handled with caution in a dedicated\
      nucleic acid handling area to prevent possible contamination."
      warning 'Avoid freeze-thaw cycles. Maintain on ice when thawed.'
      # Retrieve the last item of the single use aliquot
      check "Thaw a single aliquot of diluted positive control #{keep_tubes} \
      for each experiment and hold on ice until adding to plate."
      check 'Discard any unused portion of the aliquot.'
    end

    # Don't store the single aliquot being used during plating
    keep_tubes.each do |id| Item.find(id).mark_as_deleted end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

sample_types:
  - {name: Primer Mix, description: Primer Mix}
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object_types:
  - {name: Lyophilized Primer Mix, description: Lyophilized Primer Mix, handler: sample_container, unit: Primer Mix, release_method: return, sample_type_name: Primer Mix}
  - {name: Primer Mix Aliquot, description: Primer Mix Aliquot, handler: sample_container, unit: Primer Mix, release_method: return, prefix: M20, sample_type_name: Primer/Probe Mix}
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operation_type: Aliquot Primer/Probe
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Primer Set, sample_types: [Primer Mix], object_types: [Lyophilized Primer Mix], routing: P}
  - {ftype: sample, role: output, name: Primer Set, sample_types: [Primer Mix], object_types: [Primer Mix Aliquot], routing: P}
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protocol:
# Aliquot Primer Probe
# Written By Dany Fu 2020-05-05

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'

# 1) Upon receipt, store dried primers and probes at 2-8C.
# 2) Precautions: These reagents should only be handled in a clean area and
# stored at appropriate temperatures (see below) in the dark. Freeze-thaw cycles
# should be avoided. Maintain cold when thawed.
# 3) Using aseptic technique, suspend dried reagents in 1.5 mL of nuclease-free
# water (50X working concentration) and allow to rehydrate for 15 min at room
# temperature in the dark.
# 4) Mix gently and aliquot primers/probe in 300 uL volumes into 5 pre-labeled
# tubes. Store a single aliquot of primers/probe at 2-8oC in the dark. Do not
# refreeze (stable for up to 4 months). Store remaining aliquots at <= -20oC
# in a non-frost-free freezer.
class Protocol
  include DiagnosticRTqPCRHelper

  OUTPUT_ITEMS_NUM = { qty: 5, units: TUBE_MICROFUGE }.freeze
  TIME_REHYDRATE = { qty: 15, units: MINUTES }.freeze
  VOL_WATER = { qty: 1.5, units: MILLILITERS }.freeze
  VOL_SUSPENSION = { qty: 300, units: MICROLITERS }.freeze

  COLD_ROOM = 'M4'.freeze

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {}
  end

  ########## MAIN ##########

  def main
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    update_operation_params(
      operations: operations,
      default_operation_params: default_operation_params
    )

    get_tubes(count: operations.length)
    operations.retrieve

    save_output(operations)
    suspend_primer_mix

    # Group the operations by the input reagent
    ops_by_input = operations.group_by { |op| op.input(PRIMER_MIX).item }
    ops_by_input.each do |primer, ops|
      make_aliquots(ops: ops, primer: primer)
    end

    operations.store(interactive: true, io: 'output', method: 'boxes')
  end

  # Get 5 1.5 mL tubes per dried reagent
  # @param count [Integer] the number of operations currently running
  def get_tubes(count:)
    show do
      title "Get new #{TUBE_MICROFUGE}"
      check "Please get #{count * OUTPUT_ITEMS_NUM[:qty]} #{TUBE_MICROFUGE}"
    end
  end

  # Create and save multiple output Items per operation
  # @param operations [OperationList] List of operations
  def save_output(operations)
    operations.make

    operations.each do |op|
      op.output(PRIMER_MIX).item.associate :volume, VOL_SUSPENSION[:qty]

      output_primer = op.output(PRIMER_MIX).sample
      # makes 4 additional aliquots per op
      (OUTPUT_ITEMS_NUM[:qty] - 1).times do
        new_aliquot = output_primer.make_item('Primer Mix Aliquot')
        new_aliquot.associate :volume, VOL_SUSPENSION[:qty]
        link_output_item(operation: op, sample: output_primer, item: new_aliquot)
      end
    end
  end

  # Manually link the item to the operation as an output
  # @param op [Operation] the operation that creates the items
  # @param sample [Sample] the sample of the item
  # @param item [Item] the item that is created
  def link_output_item(operation:, sample:, item:)
    fv = FieldValue.new(
      name: PRIMER_MIX,
      child_item_id: item.id,
      child_sample_id: sample.id,
      role: 'output',
      parent_class: 'Operation',
      parent_id: operation.id,
      field_type_id: operation.output(PRIMER_MIX).field_type.id
    )
    fv.save
  end

  # Instructions for suspending dried reagents
  def suspend_primer_mix
    show do
      title 'Suspend Primer Mix'
      warning 'These reagents should only be handled in a clean area.'
      warning 'Avoid reeze-thaw cycles. Maintain on ice when thawed.'
      check "Using aseptic technique, suspend each dried primer in \
             #{qty_display(VOL_WATER)} of nuclease-free water."
      check "Rehydrate for #{qty_display(TIME_REHYDRATE)} at room temperature \
            in the dark."
      timer initial: { minutes: TIME_REHYDRATE[:qty] }
    end
  end

  # Make 5 aliquots for each primer
  # @param operations [OperationList] Array of operations grouped by primer
  def make_aliquots(ops:, primer:)
    # last_tube_id = '' # keep one of each primer
    ops.each do |op|
      input_primers = Array.new(OUTPUT_ITEMS_NUM[:qty], primer)
      aliquot_items = op.outputs.map(&:item)
      table = Table.new
                   .add_column('Primer Mix ID', input_primers.map(&:to_s))
                   .add_column('Destination Tube ID', aliquot_items.map(&:to_s))

      show do
        title 'Make Aliquots'
        check 'Label destination tube IDs according to the table.'
        check "Mix solution gently and aliquot #{qty_display(VOL_SUSPENSION)} \
              of rehydrated primer into each tube according to the table."
        table table
      end

      add_aliquot_provenance(stock_item: primer, aliquot_items: aliquot_items)

      primer.mark_as_deleted

      if debug
        aliquot = aliquot_items.last
        inspect(primer.associations, primer.id)
        inspect(aliquot.associations, aliquot.id)
      end
    end

    # One aliquot of each primer mix should be stored in the cold room instead
    # of freezer. However, this code doesn't actually work as one ObjectType
    # can only be associated with one location.
    # Leaving this here for completeness.
    # last_tube = Item.find(last_tube_id)
    # last_tube.move(COLD_ROOM)
    # last_tube.store
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

sample_types:
  - {name: Respiratory Specimen, description: Incoming sample for testing}
    - {name: Tracking ID, ftype: string, required: true}
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object_types:
  - {name: Nasopharyngeal Swab, description: Nasopharyngeal Swab, handler: sample_container, unit: each, release_method: return, prefix: M80, sample_type_name: Respiratory Specimen}
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operation_type: Extract RNA
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Specimen, sample_types: [Respiratory Specimen], object_types: [Nasopharyngeal Swab], routing: S}
  - {ftype: sample, role: output, name: Specimen, sample_types: [RNA], object_types: [Purified RNA in 1.5 mL tube], routing: T}
  - {ftype: string, role: input, name: Method, choices: QIAamp DSP Viral RNA Mini Kit,Alternative Method}
  - {ftype: json, role: input, name: Options}
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protocol:
# frozen_string_literal: true

needs 'RNA Extraction Kits/RNAExtractionHelper'
needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'

# Extract RNA Protocol
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include RNAExtractionHelper
  include DiagnosticRTqPCRHelper

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      rna_extraction_kit: QiagenRNeasyMiniKit::NAME
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      sample_volume: { qty: 300, units: MICROLITERS }
    }
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    set_kit(name: @job_params[:rna_extraction_kit])

    sample_volumes = operations.map { |op| sample_volume(op) }
    if sample_volumes.uniq.length == 1
      run_rna_extraction_kit(
        operations: operations,
        sample_volume: sample_volumes.first
      )
    else
      run_rna_extraction_kit(
        operations: operations,
        use_operations: true
      )
    end

    add_specimen_provenance(operations: operations)

    operations.store

    {}
  end

  # Add provenance to SPECIMEN inputs and outputs of operations
  #
  # @param operations [OperationList]
  # @return [void]
  def add_specimen_provenance(operations:)
    operations.each do |op|
      add_one_to_one_provenance(
        from_item: op.input(SPECIMEN).item,
        to_item: op.output(SPECIMEN).item
      )
    end
    return unless debug

    inspect(operations.last.input(SPECIMEN).item.associations, 'input')
    inspect(operations.last.output(SPECIMEN).item.associations, 'output')
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

operation_type: Extract RNA HTP
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Specimen, routing: S}
  - {ftype: sample, role: output, name: Specimen, routing: T}
  - {ftype: json, role: input, name: Options}
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protocol:
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/RNAExtractionHelper'

# Extract RNA Protocol
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include RNAExtractionHelper

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      rna_extraction_kit: TestRNAExtractionKit::NAME
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      sample_volume: { qty: 300, units: MICROLITERS }
    }
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    set_kit(name: @job_params[:rna_extraction_kit])

    sample_volumes = operations.map { |op| sample_volume(op) }
    if sample_volumes.uniq.length == 1
      run_rna_extraction_kit(
        operations: operations,
        sample_volume: sample_volumes.first
      )
    else
      run_rna_extraction_kit(
        operations: operations,
        use_operations: true
      )
    end

    operations.store

    {}
  end
end

test:
# test

sample_types:
  - {name: Primer/Probe Mix, description: Primer/Probe Mix for qPCR}
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operation_type: Prepare Master Mix
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: sample, role: input, name: Primer/Probe Mix, sample_types: [Primer/Probe Mix], object_types: [Primer Mix Aliquot], array: true, routing: M}
  - {ftype: json, role: input, name: Options}
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documentation:
Creates a collection, typically a 96-well plate, filled with qPCR master mixes. 

#### Job Options
None

#### Operation Options
`program_name [String]` The protocol to be followed, based on the qPCR
master mix used. Defaults to CDC_TaqPath_CG. For other supported protocols, see
[this document](https://github.com/aquariumbio/pcr-models/blob/master/pcr_libs/libraries/pcrcompositiondefinitions/source.rb).

`group_size [Int]` The number of master mix samples to make and add for each 
input primer. Defaults to 24.

`layout_method [String]` The method to use in laying out the plate. Defaults to `cdc_primer_layout`.

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protocol:
# typed: false
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'
needs 'Microtiter Plates/MicrotiterPlates'

# Protocol for setting up a master mix plate for RT-qPCR
# @note Instructions adapted from the CDC COVID-19 detection protocol
#   https://www.fda.gov/media/134922/download
#
# 1) In the reagent set-up room clean hood, place rRT-PCR buffer, enzyme,
#     and primer/probes on ice or cold-block. Keep cold during preparation
#     and use.
#
# 2) Mix buffer, enzyme, and primer/probes by inversion 5 times.
#
# 3) Centrifuge reagents and primers/probes for 5 seconds to collect
#     contents at the bottom of the tube, and then place the tube in
#     a cold rack.
#
# 4) Label one 1.5 mL microcentrifuge tube for each primer/probe set.
#
# 5) Determine the number of reactions (N) to set up per assay.
#   It is necessary to make excess reaction mix for the NTC, nCoVPC,
#   HSC (if included in the RT-PCR run), and RP reactions and for pipetting
#   error. Use the following guide to determine N:
#     - If number of samples (n) including controls equals 1 through 14,
#       then N = n + 1
#     - If number of samples (n) including controls is 15 or greater,
#       then N = n + 2
#
# 7) For each primer/probe set, calculate the amount of each reagent
#   to be added for each reaction mixture (N = # of reactions).
#
# 8) Dispense reagents into each respective labeled 1.5 mL microcentrifuge
#   tube. After addition of the reagents, mix reaction mixtures by
#   pipetting up and down. Do not vortex.
#
# 9) Centrifuge for 5 seconds to collect contents at the bottom of
#   the tube, and then place the tube in a cold rack.
#
# 10) Set up reaction strip tubes or plates in a 96-well cooler rack.
#
# 11) Dispense 15 uL of each master mix into the appropriate wells going
#   across the row
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include DiagnosticRTqPCRHelper

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      group_size: 24,
      program_name: 'CDC_TaqPath_CG',
      layout_method: 'cdc_primer_layout'
    }
  end

  ########## MAIN ##########

  def main
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    provision_plates(
      operations: operations,
      object_type: PLATE_OBJECT_TYPE
    )

    prepare_materials(operations: operations)

    assemble_master_mix_plates(operations: operations)

    operations.store

    inspect_data_associations(operation: operations.first) if debug

    {}
  end

  # Creates and assigns an output collection for each operation, and fills it
  #   with the output sample according to the provided PlateLayoutGenerator
  #   method
  # @note In debug mode, displays the matrix of each collection
  #
  # @param operations [OperationList]
  # @param object_type [String] the ObjectType of the collection to be made
  # @return [void]
  def provision_plates(operations:, object_type:)
    operations.each do |op|
      collection = make_new_plate(object_type, label_plate: true)
      op.output(PLATE).set(collection: collection)

      set_parts(
        collection: collection,
        group_size: op.temporary[:options][:group_size],
        method: op.temporary[:options][:layout_method],
        sample: op.output(PLATE).sample
      )

      inspect op.output(PLATE).collection.matrix if debug
    end
  end

  # Fills a collection with the provided sample according to the provided
  #   PlateLayoutGenerator method
  #
  # @param collection [Collection]
  # @param group_size [Fixnum]
  # @param method [String] a PlateLayoutGenerator method
  # @param sample [Sample] the Sample to add to the collection
  # @return [void]
  def set_parts(collection:, group_size:, method:, sample:)
    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: group_size,
      method: method
    )

    loop do
      index = layout_generator.next
      break unless index.present?

      collection.set(index[0], index[1], sample)
    end
  end

  # Prepare workspace and materials
  #
  # @todo Make this handle master mix or enzyme with separate
  #   buffer dynamically
  # @param operations [OperationList]
  # @return [void]
  def prepare_materials(operations:)
    show_prepare_workspace
    build_master_mix_compositions(operations: operations)
    retrieve_by_compositions(operations: operations)
    show_mix_and_spin_reagents
  end

  # Assembles a master mix plate for each operation
  #
  # @param operations [OperationList]
  # @return [void]
  def assemble_master_mix_plates(operations:)
    operations.each { |op| assemble_master_mix_plate(operation: op) }
  end

  # Assembles a master mix plate for an operation
  # @todo this isn't very efficient for multiple operations that all make the
  #   same plate
  # @todo refactor to take collection and compositions as arguments, not
  #   operation
  #
  # @param operation [Operation]
  # @return [void]
  def assemble_master_mix_plate(operation:)
    compositions = operation.temporary[:compositions]
    pp_labels = compositions.map { |c| c.primer_probe_mix.sample.name }
    show_label_mmix_tubes(labels: pp_labels)

    group_size = operation.temporary[:options][:group_size]
    program_name = operation.temporary[:options][:program_name]

    output_collection = operation.output(PLATE).collection
    output_collection.associate(GROUP_SIZE_KEY, group_size)
    output_collection.associate(COMPOSITION_NAME_KEY, program_name)

    make_master_mixes(
      compositions: compositions,
      sample_number: sample_number_with_excess(sample_number: group_size)
    )

    microtiter_plate = MicrotiterPlateFactory.build(
      collection: output_collection,
      group_size: group_size,
      method: :cdc_primer_layout
    )

    pipet_master_mixes(
      compositions: compositions,
      microtiter_plate: microtiter_plate
    )
  end

  # Makes large volume master mixes to be distributed among wells
  # @todo Make this address each composition in full
  #
  # @param compositions [Array<PCRComposition>]
  # @param sample_number [Fixnum] the number samples for each primer
  # @return [void]
  def make_master_mixes(compositions:, sample_number:)
    show_make_master_mixes(
      compositions: compositions,
      sample_number: sample_number
    )
  end

  # Distribute each master mix among wells on the plate
  #
  # @param compositions [Array<PCRComposition>]
  # @param microtiter_plate [MicrotiterPlate]
  # @return [void]
  def pipet_master_mixes(compositions:, microtiter_plate:)
    compositions.each do |composition|
      pipet_master_mix(
        composition: composition,
        microtiter_plate: microtiter_plate
      )
    end
  end

  # Pipet the master mixes to individual wells
  #
  # @param composition [PCRComposition]
  # @param microtiter_plate [MicrotiterPlate]
  # @return [void]
  def pipet_master_mix(composition:, microtiter_plate:)
    data = added_component_data(composition: composition)
    layout_group = microtiter_plate.associate_provenance_next_empty_group(
      key: MASTER_MIX_KEY,
      data: data
    )

    show_pipet_mmix(
      primer_mix_name: composition.primer_probe_mix.sample.name,
      volume: composition.sum_added_components(0),
      collection: microtiter_plate.collection,
      layout_group: layout_group
    )
  end

  ########## DATA METHODS ##########

  # Compute the number of 'extra' master mixes to make to account for
  #   pipetting error
  #
  # @param sample_number [Fixnum]
  # @return [Fixnum]
  def sample_number_with_excess(sample_number:)
    sample_number < 15 ? sample_number + 1 : sample_number + 2
  end

  ########## SHOW METHODS ##########

  # Instruct technician to mix the incoming reagents and spin down the tubes
  #
  # @return [void]
  def show_mix_and_spin_reagents
    show do
      title 'Mix and spin down reagents'

      note 'Mix buffer, enzyme, and primer/probes by inversion 5 times.'
      note 'Centrifuge reagents and primers/probes for 5 seconds to collect' \
        ' contents at the bottom of the tube.'
      note 'Place the tubes on ice or in a cold-block.'
    end
  end

  # Instruct technician to label the tubes that will contain the master mixes
  #
  # @param labels [Array<String>]
  # @return [void]
  def show_label_mmix_tubes(labels:)
    n = labels.length
    labels = labels.map { |label| "<b>#{label}</b>" }
    show do
      title 'Label master mix tubes'

      note "Take out #{n} #{TUBE_MICROFUGE.pluralize(n)}"
      note "Write #{labels.to_sentence} on the tops of each tube"
    end
  end

  # Instruct technician to make large volume master mixes to be
  #   distributed among wells
  #
  # @param compositions [Array<PCRComposition>]
  # @param sample_number [Fixnum]
  # @return [void]
  def show_make_master_mixes(compositions:, sample_number:)
    show do
      title 'Pipet master mix components'

      note 'Pipet the following components into each labeled master mix tube'
      table master_mix_table(
        compositions: compositions,
        sample_number: sample_number
      )
      separator

      note 'Pipet the primer/probe mixes into each corresponding' \
        ' master mix tube'
      table primer_probe_table(
        compositions: compositions,
        sample_number: sample_number
      )
    end
  end

  # Instruct technician to pipet a master mix into the plate
  #
  # @param primer_mix_name [String]
  # @param volume [Numeric]
  # @param collection [Collection]
  # @param layout_group [Array<Fixnum>]
  # @return [void]
  def show_pipet_mmix(primer_mix_name:, volume:, collection:, layout_group:)
    show do
      title "Pipet #{primer_mix_name} master mix into plate"

      note "Pipet #{volume} #{MICROLITERS} of #{primer_mix_name}" \
        " master mix into the plate #{collection}"
      table highlight_collection_rc(collection, layout_group, check: false)
    end
  end

  ########## TABLE METHODS ##########

  # Build table for volumes of master mix components
  #
  # @param compositions [Array<PCRComposition>]
  # @param sample_number [Fixnum]
  # @return [Array<Array>] a 2D array formatted for the `table` method in Krill
  def master_mix_table(compositions:, sample_number:)
    # This is a hack because otherwise only the first composition gets
    #   marked as added
    compositions.each do |composition|
      composition.master_mix.added = true
      composition.water.added = true
    end

    composition = compositions.first
    header = [
      'Component',
      composition.master_mix.sample.name,
      composition.water.display_name
    ]
    row = [
      "Volume (#{MICROLITERS})",
      composition.master_mix.add_in_table(sample_number),
      composition.water.add_in_table(sample_number)
    ]
    [header, row].transpose
  end

  # Build table for volumes of master mix components
  #
  # @param compositions [Array<PCRComposition>]
  # @param sample_number [Fixnum]
  # @return [Array<Array>] a 2D array formatted for the `table` method in Krill
  def primer_probe_table(compositions:, sample_number:)
    table = [[
      compositions.first.primer_probe_mix.display_name,
      'Item',
      "Volume (#{MICROLITERS})"
    ]]
    compositions.each do |composition|
      pp_mix = composition.primer_probe_mix
      row = [
        pp_mix.sample.name,
        pp_mix.item.to_s,
        pp_mix.add_in_table(sample_number)
      ]
      table.append(row)
    end
    table
  end

  private

  def inspect_data_associations(operation:)
    collection = operation.output(PLATE).collection
    [[0, 0], [1, 3], [2, 8]].each do |r, c|
      part = collection.part(r, c)
      inspect part, "part at #{[r, c]}"
      inspect part.associations, "data at #{[r, c]}"
    end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)

  #   mm = Sample.find_by_name('TaqPath 1-Step RT-qPCR Master Mix')
  #   p1 = Sample.find_by_name('2019-nCoV_N1')
  #   p2 = Sample.find_by_name('2019-nCoV_N2')
  #   p3 = Sample.find_by_name('RNase P')

  #   add_operation
  #     .with_property("Options", '{ "magic_number": 24, "foo": "baz" }')
  #     .with_input('Enzyme Master Mix', mm)
  #     .with_input('Primer/Probe Mix', p1)
  #     .with_input('Primer/Probe Mix', p2)
  #     .with_input('Primer/Probe Mix', p3)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

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object_types:
  - {name: 96-well qPCR Reaction, description: 96-well qPCR Reaction, handler: sample_container, unit: qPCR Reaction, release_method: return, sample_type_name: qPCR Reaction}
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operation_type: Prepare RT-qPCR Plate
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Template, sample_types: [RNA], object_types: [Purified RNA in 1.5 mL tube], array: true, routing: T}
  - {ftype: sample, role: output, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Reaction]}
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protocol:
# typed: false
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'
needs 'Microtiter Plates/MicrotiterPlates'

# Protocol for setting up a plate with extracted RNA samples
#
# @author Devin Strickland <strcklnd@uw.edu>
# @author Cannon Mallory <malloc3@uw.edu>
class Protocol
  include DiagnosticRTqPCRHelper

  CONTROL_TYPE_STUBS = %w[negative_template positive_template].freeze

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      max_inputs: 24
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      negative_template_control: nil,
      negative_template_location: nil,
      positive_template_control: 'Test nCoVPC',
      positive_template_location: [0, 11],
      program_name: 'CDC_TaqPath_CG',
      group_size: 3,
      layout_method: 'cdc_sample_layout'
    }
  end

  def main
    setup_test_plates(operations: operations) if debug
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )

    validate(operations: operations)
    return {} if operations.errored.any?

    prepare_materials(operations: operations)
    # operations.make

    operations.each do |op|
      op.pass(PLATE)
      add_all_samples(operation: op)
    end

    operations.store

    {}
  end

  def add_all_samples(operation:)
    collection = operation.output(PLATE).collection
    remaining_compositions = operation.temporary[:compositions].dup
    operation_parameters = operation.temporary[:options]

    microtiter_plate = MicrotiterPlateFactory.build(
      collection: collection,
      group_size: operation_parameters[:group_size],
      method: operation_parameters[:layout_method]
    )

    remaining_compositions = add_control_samples(
      compositions: remaining_compositions,
      microtiter_plate: microtiter_plate,
      operation_parameters: operation_parameters
    )

    add_diagnostic_samples(
      compositions: remaining_compositions,
      microtiter_plate: microtiter_plate
    )

    seal_plate(collection)
    show_result(collection: collection) if debug
  end

  # Prepare workspace and materials
  #
  # @todo Make this handle master mix or enzyme with separate
  #   buffer dynamically
  # @param operations [OperationList]
  # @return [void]
  def prepare_materials(operations:)
    rnase_warning
    safety_warning
    build_template_compositions(operations: operations)
    retrieve_by_compositions(operations: operations)
  end

  # Provides instructions and handling for addition of control
  # samples.  Returns all inputs that are NOT control inputs
  #
  # @param compositions [Array<PCRCompostion>]
  # @param microtiter_plate [MicrotiterPlate]
  # @param operation_parameters [Hash]
  # @return operation_inputs [Array<item>]
  def add_control_samples(compositions:, microtiter_plate:,
                          operation_parameters:)
    remaining_compositions = []
    CONTROL_TYPE_STUBS.each do |stub|
      name = operation_parameters["#{stub}_control".to_sym]
      loc = operation_parameters["#{stub}_location".to_sym]

      next unless name.present? && loc.present?

      compositions, remaining_compositions = compositions.partition do |c|
        c.template.sample.name == name
      end

      add_samples(
        compositions: compositions,
        microtiter_plate: microtiter_plate,
        column: loc[1]
      )

      # negative control samples need to be covered after addition
      next unless stub.include?('negative')

      seal_plate(collection, rc_list: get_rna_samples(collection))
    end
    remaining_compositions
  end

  # Provides instructions to add diagnostic samples to collection
  #
  # @param compositions [Array<PCRCompostion>]
  # @param microtiter_plate [MicrotiterPlate]
  def add_diagnostic_samples(compositions:, microtiter_plate:)
    add_samples(
      compositions: compositions,
      microtiter_plate: microtiter_plate
    )
  end

  # validates operations and ensures that they are formatted as expected
  #
  # @param operations [OperationList]
  def validate(operations:)
    operations.each do |op|
      if op.input_array(TEMPLATE).length > @job_params[:max_inputs]
        raise IncompatibleInputsError, "Too many inputs for Operation #{op.id}"
      end
    end
  rescue IncompatibleInputsError => e
    error_operations(operations: operations, err: e)
  end

  # Say you're quitting due to an error and error all the operations
  #
  def error_operations(operations:, err:)
    show do
      title 'Incompatible Inputs Detected'
      warning err.message
    end

    operations.each { |op| op.error(:incompatible_inputs, err.message) }
  end

  class IncompatibleInputsError < ProtocolError; end
  class NoAvailableWells < ProtocolError; end
end

test:
class ProtocolTest < ProtocolTestBase
    def setup
      add_random_operations(1)
    end
  
    def analyze
      log('Hello from Nemo')
      assert_equal(@backtrace.last[:operation], 'complete')
    end
  end

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operation_type: Run qPCR
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Reaction], routing: P}
  - {ftype: json, role: input, name: Options}
  - {ftype: sample, role: output, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Reaction], routing: P}
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protocol:
# frozen_string_literal: true

needs 'PCR Libs/PCRComposition'
needs 'PCR Libs/PCRProgram'
needs 'Thermocyclers/Thermocyclers'
needs 'Standard Libs/PlanParams'
needs 'Standard Libs/Debug'
needs 'Standard Libs/UploadHelper'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

# Protocol for loading samples into a qPCR thermocycler and running it
#
# @author Devin Strickland <strcklnd@uw.edu>
# @todo Decide whether this is actually qPCR specific
class Protocol
  include ThermocyclerHelper
  include PlanParams
  include Debug
  include UploadHelper
  include DataAssociationKeys

  INPUT_REACTIONS = 'qPCR Reactions'

  THERMOCYCLER_KEY = 'thermocycler'.to_sym

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      program_name: 'CDC_TaqPath_CG',
      qpcr: true
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      thermocycler_model: TestThermocycler::MODEL,
    }
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug

    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    available_thermocyclers = get_available_thermocyclers

    remove_unavailable_operations(available_thermocyclers)

    return {} if operations.empty?

    operations.retrieve.make

    composition = PCRCompositionFactory.build(
      program_name: @job_params[:program_name]
    )
    program = PCRProgramFactory.build(
      program_name: @job_params[:program_name],
      volume: composition.volume
    )

    running_thermocyclers = start_thermocyclers(program: program,
                                                composition: composition)

    get_data(running_thermocyclers: running_thermocyclers)

    operations.store

    {}
  end

  def get_data(running_thermocyclers:)
    running_thermocyclers.each do |op, thermocycler|
      go_to_thermocycler(thermocycler_name: op.get(THERMOCYCLER_KEY)['name'])
      export_measurements(thermocycler: thermocycler)

      associate_measurement(file_name: op.get(RAW_QPCR_DATA_KEY),
                            plate: op.input(INPUT_REACTIONS).collection)
    end
  end

  def start_thermocyclers(program:, composition:)
    running_thermocyclers = []
    operations.each do |op|
      plate = op.input(INPUT_REACTIONS).item

      file_name = experiment_filename(plate)

      thermo_type = op.get(THERMOCYCLER_KEY)

      op.associate(RAW_QPCR_DATA_KEY, file_name)

      thermocycler = ThermocyclerFactory.build(
        model: thermo_type['model']
      )

      go_to_thermocycler(thermocycler_name: thermo_type['name'], plate: plate)

      set_up_program(
        thermocycler: thermocycler,
        program: program,
        composition: composition,
        qpcr: @job_params[:qpcr]
      )

      load_plate_and_start_run(
        thermocycler: thermocycler,
        items: plate,
        experiment_filename: file_name
      )
      running_thermocyclers.push([op, thermocycler])
    end
    running_thermocyclers
  end

  def associate_measurement(file_name:, plate:)
    file = upload_data(file_name, 1, 4)
    plate.associate(RAW_QPCR_DATA_KEY, file)
  end

  def go_to_thermocycler(thermocycler_name:, plate: nil)
    show do
      title 'Go to Thermocycler'
      note "Take the #{plate.object_type.name} <b>#{plate.id}</b>"\
           " to Thermocycler #{thermocycler_name}" unless plate.nil?
      note "Complete the next few steps at Thermocycler #{thermocycler_name}"
    end
  end

  def get_available_thermocyclers
    thermocyclers = find_thermocyclers
    available_key = 'available'
    response = show do
      title 'Check Available Thermocyclers'
      note 'Please check which thermocyclers are currently available'
      thermocyclers.each_with_index do |thermo|
        select([available_key, 'unavailable'],
               var: thermo['name'].to_s,
               label: "Thermocycler #{thermo['name']}")
      end
    end
    available_thermo = []
    thermocyclers.map do |thermo|
      next unless response[thermo['name'].to_s] == available_key || debug

      available_thermo.push(thermo)
    end
    available_thermo
  end

  def find_thermocyclers
    Parameter.where(key: 'thermocycler').map { |thr| JSON.parse(thr.value) }
  end

  def remove_unavailable_operations(available_thermocyclers)
    ops_to_remove = find_unavailable_ops(available_thermocyclers)
    operations.reject! { |op| ops_to_remove.include?(op) }
    error_op_warning(ops_to_remove)
    ops_to_remove.each do |op|
      op.error(:unavailablethermocycler, 'No thermocyclers were available')
      op.set_status_recursively('pending')
    end
  end

  def error_op_warning(ops_to_remove)
    show do
      title 'Thermocyclers Unavailable'
      note 'There are not enough available thermocyclers for this job'
      warning 'The following plates were removed from this job'
      ops_to_remove.each do |op|
        note op.input(INPUT_REACTIONS).collection.id.to_s
      end
    end
  end

  def find_unavailable_ops(thermocyclers)
    ops_to_remove = []
    operations.each do |op|
      available = false
      thermocyclers.each do |thermo|
        next unless thermo['model'] == op.temporary[:options][:thermocycler_model] || true

        op.associate(THERMOCYCLER_KEY, thermo)
        thermocyclers.delete(thermo)
        available = true
        break
      end
      ops_to_remove.push(op) unless available 
    end
    ops_to_remove
  end

  class UnavailableThermocycler < ProtocolError; end

  ########## NAMING METHODS ##########

  # Constructs a name for the experiment file.
  #
  # @return [String]
  def experiment_filename(plate)
    date = DateTime.now.strftime('%Y-%m-%d')
    "#{date}_Job_#{job.id}_#{plate.id}"
  end

  # Gets the currently active `Job`
  #
  # @return [Job]
  def job
    operation_ids = operations.map(&:id)
    ja_ids = JobAssociation.where(operation_id: operation_ids).map(&:job_id).uniq
    jobs = Job.find(ja_ids).select(&:active?)
    raise ProtocolError, 'Cannot resolve the current Job' if jobs.length > 1

    jobs.last
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
    # [1..3].each do |i|
    #   s = Sample.find_by_name("Test qPCR Reaction #{i}")
    #   add_operation
    #     .with_input('qPCR Reactions', s)
    #     .with_property('Options', '{"thermocycler_model": "BioRad CFX96", "program_name": "CDC_qScript_XLT_ToughMix"}')
    #     .with_output('qPCR Reactions', s)
    # end
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

library: {name: DataAssociationKeys, category: Diagnostic RT-qPCR}
code_source:
# frozen_string_literal: true

module DataAssociationKeys
  COMPOSITION_NAME_KEY = 'composition_name'
  PRIMER_GROUP_SIZE_KEY = 'primer_group_size'
  PRIMER_METHOD_KEY = 'primer_method'
  SAMPLE_GROUP_SIZE_KEY = 'sample_group_size'
  SAMPLE_METHOD_KEY = 'sample_method'
  MASTER_MIX_KEY = 'master_mix'
  MASTER_MIX_STOCK_KEY = 'master_mix_stock'
  PRIMER_PROBE_MIX_KEY = 'primer_probe_mix'
  TEMPLATE_KEY = 'template'
  RAW_QPCR_DATA_KEY = 'raw_qpcr_data'
  LOT_NUM_KEY = 'lot_number'
end

library: {name: DiagnosticRTqPCRCompositions, category: Diagnostic RT-qPCR}
code_source:
# typed: false
# frozen_string_literal: true

needs 'PCR Libs/PCRComposition'

# Module for working with PCRCompositions used in Diagnostic RT qPCR
#
# @author Devin Strickland <strcklnd@uw.edu>
module DiagnosticRTqPCRCompositions
  PRIMER_PROBE_MIX = 'Primer/Probe Mix' # Should converge with PRIMER_PROBE_MIX
      # in PCRCOmpositionDefinitions
  TEMPLATE = 'Template'

  # Initialize all `PCRComposition`s for each operation stripwell
  #
  # @param operations [OperationList]
  # @return [void]
  def build_stripwell_master_mix_compositions(operations:)
    operations.each do |op|
      primer_mixes = []
      op.input_array(PRIMER_PROBE_MIX).each do |fv|
        primer_mixes += fv.collection.parts
      end

      compositions = []

      primer_mixes.each do |primer_mix|
        composition = build_modified_master_mix_composition(
          primer_mix: primer_mix,
          program_name: op.temporary[:options][:program_name]
        )
        compositions.append(composition)
      end

      op.temporary[:compositions] = compositions
    end
  end

  # Initialize a `PCRComposition` for a given primer mix and program
  # stripwell
  #
  # @param primer_mix [Item]
  # @param program_name [String]
  # @return [PCRComposition]
  def build_modified_master_mix_composition(primer_mix:, program_name:)
    composition = PCRCompositionFactory.build(program_name: program_name)
    composition.primer_probe_mix.item = primer_mix
    composition
  end

  # Initialize all `PCRComposition`s for each operation
  #
  # @param operations [OperationList]
  # @return [void]
  def build_master_mix_compositions(operations:)
    operations.each do |operation|
      primer_mixes = operation.input_array(PRIMER_PROBE_MIX).map(&:item)

      compositions = []

      primer_mixes.each do |primer_mix|
        composition = build_master_mix_composition(
          primer_mix: primer_mix,
          program_name: operation.temporary[:options][:program_name]
        )
        compositions.append(composition)
      end

      operation.temporary[:compositions] = compositions
    end
  end

  # Initialize a `PCRComposition` for a given primer mix and program
  #
  # @param primer_mix [Item]
  # @param program_name [String]
  # @return [PCRComposition]
  def build_master_mix_composition(primer_mix:, program_name:)
    composition = PCRCompositionFactory.build(program_name: program_name)
    mm_item = master_mix_item(sample: composition.master_mix.sample)
    composition.master_mix.item = mm_item
    composition.primer_probe_mix.item = primer_mix
    composition.water.item = water_item
    composition
  end

  # Initialize all `PCRComposition`s for each operation
  #
  # @param operations [OperationList]
  # @return [void]
  def build_template_compositions(operations:)
    operations.each do |operation|
      templates = operation.input_array(TEMPLATE).map(&:item)
      compositions = []

      templates.each do |template|
        composition = build_template_composition(
          template: template,
          program_name: operation.temporary[:options][:program_name]
        )
        compositions.append(composition)
      end
      operation.temporary[:compositions] = compositions
    end
  end

  # Initialize all `PCRComposition`s for each operation
  #
  # @param operations [OperationList]
  # @return [void]
  def build_ntc_compositions(operations:)
    operations.each do |operation|
      composition = build_template_composition(
        template: no_template_control_item,
        program_name: operation.temporary[:options][:program_name]
      )
      operation.temporary[:compositions] = [composition]
    end
  end

  # Initialize a `PCRComposition` for the given program
  #
  # @param program_name [String]
  # @return [PCRComposition]
  def build_template_composition(template:, program_name:)
    composition = PCRCompositionFactory.build(program_name: program_name)
    composition.template.item = template
    composition
  end

  # Retrieve `Item`s required for the protocol based on what's in
  #   the compositions that are attached to the operations
  #
  # @param operations [OperationList]
  # @return [void]
  def retrieve_by_compositions(operations:)
    compositions = operations.map { |op| op.temporary[:compositions] }.flatten
    items = compositions.map(&:items).flatten.compact.uniq
    items = items.sort_by(&:object_type_id)
    take(items, interactive: true)
  end

  # Build the data structure that documents the provenance of a
  #   master mix
  #
  # @param primer_mix [Item]
  # @param composition [PCRComposition]
  # @return [Hash] a data structure that documents the provenance of a
  #   master mix
  def added_component_data(composition:)
    composition.added_components.map { |component| collect_data(component) }
  end

  # Reduce a `ReactionComponent` (part of a `PCRComposition`) to a simplified
  #   Hash of selected attributes
  #
  # @param component [ReactionComponent]
  # @return [Hash]
  def collect_data(component)
    {
      name: component.input_name,
      item: component.item,
      volume: component.volume_hash
    }
  end
end

library: {name: DiagnosticRTqPCRDebug, category: Diagnostic RT-qPCR}
code_source:
# typed: false
# frozen_string_literal: true

needs 'Collection Management/CollectionTransfer'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

module DiagnosticRTqPCRDebug
  include CollectionTransfer
  include DataAssociationKeys

  VERBOSE = false
  PLATE = 'PCR Plate'

  def debug_parameters
    {
      group_size: 3,
      program_name: 'CDC_TaqPath_CG',
      debug_primer: [5, 8, 9], # rp, n1, n2,
      debug_template: 'template',
      debug_item_ids: [257] + Array.new(22, 256)
    }
  end

  # Populate all input plates with qPCR Reactions
  #
  # @param operations [OperationList]
  # @param method [String]
  # @return [void]
  def setup_test_plates(operations:, method: nil)
    operations.each do |op|
      setup_test_plate(collection: op.input(PLATE).collection, method: method)
      op.set_input('Template', Item.find(debug_parameters[:debug_item_ids]))
    end
  end

  # Populate a collection with qPCR Reactions
  #
  # @param collection [Collection]
  # @param method [String]
  # @return [void]
  def setup_test_plate(collection:, method:)
    collection.associate(:program_name, debug_parameters[:program_name])
    collection.associate(:group_size, debug_parameters[:group_size])
    qpcr_reaction = Sample.find_by_name('Test qPCR Reaction')

    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: 24,
      method: :cdc_primer_layout
    )

    loop do
      layout_group = layout_generator.next_group
      break unless layout_group.present?

      layout_group.each do |r, c|
        collection.set(r, c, qpcr_reaction)
        part = collection.part(r, c)
        part.associate(MASTER_MIX_KEY, 'added')
      end
    end

    if method == :master_mix
      show_result(collection: collection) if VERBOSE
      inspect_data_associations(collection: collection) if VERBOSE
      return
    end

    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: debug_parameters[:group_size],
      method: :cdc_sample_layout
    )
    layout_group = layout_generator.next_group
    layout_group.each do |r, c|
      part = collection.part(r, c)
      part.associate(TEMPLATE_KEY, 'added')
    end

    show_result(collection: collection) if VERBOSE
    inspect_data_associations(collection: collection) if VERBOSE
  end

  # Show all the non-empty wells of the test plate
  # @todo figure out what you really want to show here
  #
  # @param collection [Collection]
  # @return [void]
  def show_result(collection:)
    show do
      title 'Test Plate Setup'
      table highlight_non_empty(collection)
    end
  end

  # Inspect a subset of the parts and their data associations
  #
  # @param collection [Collection]
  # @return [void]
  def inspect_data_associations(collection:)
    [[0, 0], [0, 3], [0, 8]].each do |r, c|
      part = collection.part(r, c)
      inspect part, "part at #{[r, c]}"
      inspect part.associations, "data at #{[r, c]}"
    end
  end
end

library: {name: DiagnosticRTqPCRHelper, category: Diagnostic RT-qPCR}
code_source:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Debug'
needs 'Standard Libs/Pipettors'
needs 'Standard Libs/LabwareNames'
needs 'Collection Management/CollectionActions'
needs 'Collection Management/CollectionDisplay'
needs 'Collection Management/CollectionTransfer'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'
needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRDebug'
needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRCompositions'

# Module for elements that are common throughout Diagnostic RT qPCR
#
# @author Devin Strickland <strcklnd@uw.edu>
module DiagnosticRTqPCRHelper
  # Standard Libs
  include Units
  include PlanParams
  include CommonInputOutputNames
  include Debug
  include Pipettors
  include LabwareNames

  # Collection Management
  include CollectionActions
  include CollectionDisplay
  include CollectionTransfer

  # Diagnostic RT-qPCR
  include DataAssociationKeys
  include DiagnosticRTqPCRDebug
  include DiagnosticRTqPCRCompositions

  WATER = 'Molecular Grade Water'
  WATER_OBJECT_TYPE = 'Reagent Aliquot'
  PLATE = 'PCR Plate'
  PLATE_OBJECT_TYPE = '96-well qPCR Plate'
  PRIMER_MIX = 'Primer/Probe Mix'
  MASTER_MIX_OBJECT_TYPE = 'qPCR Master Mix Stock'
  SPECIMEN = 'Specimen'

  RNA_FREE_WORKSPACE = 'reagent set-up room'

  def rnase_warning
    show do
      title 'RNase degrades RNA'
      note 'RNA is prone to degradation by RNase present in our eyes, skin, and breath.'
      note 'Avoid opening tubes outside the Biosafety Cabinet (BSC).'
      bullet 'Change gloves whenever you suspect potential RNAse contamination'
    end
  end

  def safety_warning
    show do
      title 'Review Safety Warnings'
      note '<b>Always</b> pay attention to orange warning blocks throughout the protocol.'
      warning '<b>INFECTIOUS MATERIALS</b>'
      note 'You will be working with infectious materials.'
      note 'Do <b>ALL</b> work in a biosafety cabinet (BSC).'
      note '<b>PPE is required</b>'
      check 'Put on lab coat.'
      check 'Put on 2 layers of gloves.'
      bullet 'Make sure to use tight gloves. Tight gloves reduce the chance of the gloves getting caught on the tubes when closing their lids.'
      bullet 'Change outer layer of gloves after handling infectious sample and before touching surfaces outside of the BSC (such as a refrigerator door handle).'
    end
  end

  # Adds samples to to collections, provides instructions to tech
  #
  # @param compositions [Array<PCRCompostion>]
  # @param microtiter_plate [MicrotiterPlate]
  # @param column [int]
  def add_samples(compositions:, microtiter_plate:, column: nil)
    compositions.each do |composition|
      layout_group = microtiter_plate.next_empty_group(
        key: TEMPLATE_KEY,
        column: column
      )

      # inspect 'Skipping method single_channel_item_to_collection'
      single_channel_item_to_collection(
        to_collection: microtiter_plate.collection,
        source: composition.template.item,
        volume: composition.template.volume_hash,
        association_map: layout_group.map { |r, c| { to_loc: [r, c] } }
      )

      composition.template.added = true

      microtiter_plate.associate_provenance_group(
        group: layout_group,
        key: TEMPLATE_KEY,
        data: added_component_data(composition: composition)
      )
    end
  end

  # Instruct technician to do everything necessary to prepare the workspace
  #
  # @return [void]
  def show_prepare_workspace
    show do
      title 'Prepare workspace'

      note "All tasks in this protocol occur in the #{RNA_FREE_WORKSPACE}."
      note 'As you retrieve reagents, place them on ice or in a cold-block.'
    end
  end

  ########## ITEM METHODS ##########

  # Finds a master mix Item in inventory
  #
  # @param sample [Sample] of qPCR Master Mix
  # @return [Item]
  def master_mix_item(sample:)
    get_item(
      sample: sample,
      object_type_name: MASTER_MIX_OBJECT_TYPE
    )
  end

  # Finds a water Item in inventory
  #
  # @return [Item]
  def water_item
    get_item(
      sample: Sample.find_by_name(WATER),
      object_type_name: WATER_OBJECT_TYPE
    )
  end

  # Finds a water Item in inventory for no template control
  #
  # @return [Item]
  def no_template_control_item
    water_item
  end

  # Finds an Item in inventory for the given `Sample` and `ObjectType`
  # @todo replace with a back-end method such as `Sample.in`
  #
  # @param sample [Sample]
  # @param object_type_name [String]
  # @return [Item]
  def get_item(sample:, object_type_name:)
    Item.with_sample(sample: sample)
        .where(object_type: ObjectType.find_by_name(object_type_name))
        .reject(&:deleted?)
        .first
  end

  ########## PROVENANCE METHODS ##########

  # Add provenance metadata to a stock item and aliquots made from that stock
  #
  # @param stock_item [Item] the source item for the aliquot operation
  # @param aliquot_items [Array<Item>] the aliqouts made in the operation
  # @return [void]
  def add_aliquot_provenance(stock_item:, aliquot_items:)
    from_map = AssociationMap.new(stock_item)
    to_maps = aliquot_items.map { |a| [a, AssociationMap.new(a)] }

    to_maps.each do |aliquot_item, to_map|
      add_provenance(
        from: stock_item, from_map: from_map,
        to: aliquot_item, to_map: to_map
      )
      from_map.save
      to_map.save
    end
  end

  def add_one_to_one_provenance(from_item:, to_item:)
    from_map = AssociationMap.new(from_item)
    to_map = AssociationMap.new(to_item)

    add_provenance(
      from: from_item, from_map: from_map,
      to: to_item, to_map: to_map
    )
    from_map.save
    to_map.save
  end

  ################### Provision Plate Methods ################

  # Creates and assigns an output collection for each operation, and fills it
  #   with the output sample according to the provided PlateLayoutGenerator
  #   method
  # @note In debug mode, displays the matrix of each collection
  #
  # @param operations [OperationList]
  # @param object_type [String] the ObjectType of the collection to be made
  # @return [void]
  def provision_plates(operations:)
    operations.each do |op|
      collection = op.output(PLATE).make_collection
      get_and_label_new_plate(collection)

      set_parts(
        collection: collection,
        group_size: op.temporary[:options][:group_size],
        method: op.temporary[:options][:layout_method],
        sample: op.output(PLATE).sample
      )

      inspect op.output(PLATE).collection.matrix if debug
    end
  end

  # Fills a collection with the provided sample according to the provided
  #   PlateLayoutGenerator method
  #
  # @param collection [Collection]
  # @param group_size [Fixnum]
  # @param method [String] a PlateLayoutGenerator method
  # @param sample [Sample] the Sample to add to the collection
  # @return [void]
  def set_parts(collection:, group_size:, method:, sample:)
    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: group_size,
      method: method,
      dimensions: collection.dimensions
    )

    loop do
      index = layout_generator.next
      break unless index.present?

      collection.set(index[0], index[1], sample)
    end
  end

  ############# STRIPWELL METHODS ############
  
  # Adds a stripwell to a microtiter plate
  #
  # @param composition_group [Array<Compositions>] list of compositions that are
  #    all contained in the same stripwell
  # @param microtiter_plate [MicrotiterPlate]
  def add_stripwell(composition_group:, microtiter_plate:, stripwell:)
    layout_group = microtiter_plate.next_empty_group(key: PRIMER_PROBE_MIX_KEY)
    composition_group.zip(layout_group).each do |composition, lyt|
      data = added_component_data(composition: composition)
      microtiter_plate.associate_provenance(index: lyt,
                                            key: PRIMER_PROBE_MIX_KEY,
                                            data: data)
    end
    show_add_stripwell(layout_group: layout_group,
                       stripwell: stripwell,
                       collection: microtiter_plate.collection)
  end

  # Show instructions to place stripwell in rack
  # @param layout_group [Array<[r,c]>]
  # @param stripwell [Collection]
  # @param collection [Collection] the collection of the microtiter plate
  def show_add_stripwell(layout_group:, stripwell:, collection:)
    show_mark_stripwell(stripwell: stripwell)
    show do 
      title 'Add Stripwell to Stripwell Rack'
      note "Please place stripwell #{stripwell.id} in"\
        " stripwell rack #{collection.id} per table below"
      note 'Make sure column 1 of the stripwell lines up with column 1 of the rack'
      table highlight_collection_rc(collection, layout_group){ stripwell.parts.first.sample.name }
    end
  end

  # Directions to mark a stripwell correctly
  #
  # @param stripwell [Colleciton]
  def show_mark_stripwell(stripwell:)
    show do
      title 'Mark Stripwell'
      note 'Using a felt tip marker please mark'\
        " stripwell #{stripwell.id}"
      note "Mark one end <b>1</b> and the other <b>#{stripwell.dimensions[1]}"
      warning 'Do NOT mark the lids of the stripwell!'
    end
  end
end

library: {name: PrepareRTqPCRValidation, category: Diagnostic RT-qPCR}
code_source:
# frozen_string_literal: true

module PrepareRTqPCRValidation

  # Validates that all operations are as expected
  #
  # @param operations [OperationList] list of operations
  # @raise rescue will Error any operations that do not pass validation
  def validate(operations:)
    input_errors = []
    content_errors = []
    all_errors = []

    operations.each do |op|
      valid_input, input_error = validate_inputs(op)
      valid_contents, content_error = validate_contents(op)
      unless valid_input
        all_errors.push(op)
        input_errors.push({op: op, error: input_error})
        op.error(:IncompatibleInputsError, input_error)
      end

      unless valid_contents
        all_errors.push(op)
        content_errors.push({op: op, error: content_error})
        op.error(:InvalidContentsError, content_error)
      end
    end

    display_error(input_errors) unless input_errors.empty?
    display_error(content_errors) unless content_errors.empty?

    all_errors
  end

  def display_error(error_list)
    error_type = error_list.first[:error]
    tab = [['<b>Operation<b>', '<b>Error Message</b>']]
    error_list.each do |err|
      tab.push([err[:op].id, err[:error]])
    end

    show do
      title 'Operation Error'
      note "The following operations had #{error_type}"
      table tab
    end
  end

  def validate_contents(op)
    [true, nil]
  end

  def validate_inputs(op)
    #[failed/passed, message]
    [true, nil]
  end

  class IncompatibleInputsError < ProtocolError; end
  class InvalidContentsError < ProtocolError; end

  
end

library: {name: PrepareqPCRPlateHelper, category: Diagnostic RT-qPCR}
code_source:
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Debug'
needs 'Standard Libs/InputOutput'
needs 'Standard Libs/Pipettors'
needs 'Standard Libs/Units'
needs 'Collection Management/CollectionActions'
needs 'Collection Management/CollectionDisplay'
needs 'Collection Management/CollectionTransfer'
# needs 'Collection Management/CollectionLocation'
needs 'Collection Management/CollectionData'
needs 'Microtiter Plates/PlateLayoutGenerator'

# Protocol methods for setting up plate withe extracted RNA Samples
#
# @author Devin Strickland <strklnd@uw.edu>
# @author Cannon Mallory <malloc3@uw.edu>
module PrepareqPCRPlateHelper
  include PlanParams
  include Debug
  include InputOutput
  include Pipettors
  include Units
  include CommonInputOutputNames
  include CollectionActions
  include CollectionDisplay
  include CollectionTransfer
  # include CollectionLocation
  include CollectionData

  attr_reader :job_params

  TEMPLATE = 'Template'
  OPTIONS = 'options'
  INPUT_PLATE = 'Input PCR Plate'
  OUTPUT_PLATE = 'Output PCR Plate'
  OUTPUT_C_TYPE = '96-well qPCR Reaction'

  # An assortment of items for debugging
  # Make sure these exist and are right item type
  # [Positive Control, human sample, human sample]
  DEBUG_ITEMS = [425, 8627, 262]
  DEBUG_CONTAINER = 18007  # Make sure that proper samples exist in plate (currently
                           # Validation steps rubber stamp everything)

  def run_job(default_job_params:, default_operation_params:, op:)
    @job_params = update_plan_params(plan_params: default_job_params,
                                     opts: default_operation_params)

    @job_params = update_plan_params(plan_params: job_params,
                                     opts: get_op_opts(op))

    input_collection = op.input(INPUT_PLATE).collection
    input_collection = Collection.find(DEBUG_CONTAINER) if debug
    output_collection = relabel_plate(input_collection)
    op.output(OUTPUT_PLATE).set(collection: output_collection)

    input_collection.mark_as_deleted unless debug

    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: job_params[:group_size],
      method: job_params[:method]
    )

    if debug
      operation_inputs = generate_samples
    else
      operation_inputs = op.input_array(TEMPLATE).map { |fv| fv.item }
    end

    sample_inputs, negative_controls, positive_controls =
      sort_inputs(neg_control: job_params[:negative_controls],
                  pos_control: job_params[:positive_controls],
                  operation_inputs: operation_inputs)

    setup_control_samples(operation_inputs: negative_controls,
                        collection: output_collection,
                        layout_generator: layout_generator,
                        controls: job_params[:negative_controls])

    setup_control_samples(operation_inputs: positive_controls,
                        collection: output_collection,
                        layout_generator: layout_generator,
                        controls: job_params[:positive_controls])

    setup_samples(operation_inputs: sample_inputs,
                           collection: output_collection,
                           layout_generator: layout_generator)

    associate_plate_to_plate(to_collection: output_collection,
                             from_collection: input_collection)


    add_additional_components(rc_list: make_sample_rc_list(output_collection,
                                                    operation_inputs),
                              collection: output_collection,
                              recipe_list: job_params[:additional_inputs],
                              operation: op)
    
    add_negative_controls(collection: output_collection, samples: negative_controls,
                          recipe: job_params[:negative_controls], operation: op)

    add_inputs(collection: output_collection, samples: sample_inputs,
               recipe: job_params[:standard_samples], operation: op)

    add_inputs(collection: output_collection, samples: positive_controls,
               recipe: job_params[:positive_controls], operation: op)

    {}
  end

  def add_negative_controls(collection:, samples:, recipe:, operation:)
    return if samples.length == 0

    show do
      title 'Adding Negative Controls'
      note 'It is <b>VERY</b> important to ensure that negative controls are not
             contaminated'
      note 'Take extra time to ensure proper sterile techniques are used'
    end

    add_inputs(collection: collection, samples: samples,
               recipe: recipe, operation: operation)

    show do
      title 'Cover Negative Control Wells'
      note 'Carefully cap control wells per table below'
      table highlight_collection_rc(collection,
            make_sample_rc_list(collection, samples)){ |r, c|
              convert_coordinates_to_location([r,c]) }
    end
  end

  def add_inputs(collection:, samples:, recipe:, operation:)
    unless recipe[:additional_inputs].nil?
      add_additional_components(rc_list: make_sample_rc_list(collection,
                                                             samples),
                                collection: collection,
                                recipe_list: recipe[:additional_inputs],
                                operation: operation)
    end

    return if samples.length == 0 

    move_to_station(recipe[:station])
    layout_materials(samples + [collection])

    samples.each do |item|
      add_to_plate(rc_list: make_sample_rc_list(collection, [item]),
                   collection: collection,
                   source: item,
                   volume: recipe[:volume])
    end
  end

  def add_additional_components(rc_list:, collection:, recipe_list:, operation:)
    recipe_list.each do |recipe|
      add_static_inputs([operation], recipe[:name],
                        recipe[:name], recipe[:container])
      item = operation.input(recipe[:name]).item

      move_to_station(recipe[:station])
      layout_materials([item, collection])

      add_to_plate(rc_list: rc_list, collection: collection, source: item,
                   volume: recipe[:volume])
    end
  end

  def add_to_plate(rc_list:, collection:, source:, volume:)
    show do
      title 'Pipette into Plate'
      note pipet(volume: volume, source: source,
                 destination: 'the highlighted wells below')
      table highlight_collection_rc(collection, rc_list) { |r, c|
        convert_coordinates_to_location([r,c])
      }
    end
  end

  def move_to_station(station)
    show do 
      title 'Move to Station'
      note "Please move to #{station} to complete the following steps"
    end
  end

  def layout_materials(materials)
    show do
      title 'Layout Materials'
      note 'Please set out the following items for easy access'
      table create_location_table(materials)
    end
  end

  def make_sample_rc_list(collection, inputs)
    rc_list = []
    inputs.each do |item|
      item = item.sample unless item.is_a? Sample
      rc_list += collection.find(item)
    end
    rc_list
  end


  def setup_control_samples(operation_inputs:, collection:,
                          layout_generator:, controls:)
    setup_samples(
      operation_inputs: operation_inputs,
      collection: collection,
      layout_generator: layout_generator,
      column: controls[:first_well][1]
    )
  end

  def generate_samples
    debug_items = []
    DEBUG_ITEMS.each do |id|
      debug_items.push(Item.find(id))
    end
    debug_items
  end

  def sort_inputs(neg_control:, pos_control:, operation_inputs:)
    remaining_inputs = []
    negative_controls = []
    positive_controls = []
    operation_inputs.each do |input|
      input_name = input.sample.name

      if input_name.include?(neg_control[:name])
        negative_controls.push(input)
      elsif input_name.include?(pos_control[:name])
        positive_controls.push(input)
      else
        remaining_inputs.push(input)
      end
    end
    [remaining_inputs, negative_controls, positive_controls]
  end

  def setup_samples(operation_inputs:, collection:, layout_generator:, column: nil)
    operation_inputs.each do |fv|

      job_params[:max_inputs].times do

        retry_group = true

        layout_group = layout_generator.next_group(column: column)

        layout_group.each do |r, c|
          existing_part = collection.part(r, c)

          if existing_part.sample.name.include?(job_params[:negative_controls][:name]); break; end
          if existing_part.sample.name.include?(job_params[:positive_controls][:name]); break; end

          collection.set(r, c, fv.sample)

          from_obj_to_obj_provenance(collection.part(r, c), existing_part)

          retry_group = false
        end

        column = layout_generator.iterate_column(column)
        break unless retry_group
      end
    end
  end

end
