config:
  title: diagnostic_rt_qpcr
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.2
sample_types:
  - {name: qPCR Reaction, description: qPCR Reaction}
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object_types:
  - {name: 96-well qPCR Plate, description: 96-well qPCR Reaction, handler: collection, unit: qPCR Reaction, release_method: return, rows: 8, columns: 12, sample_type_name: qPCR Reaction}
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operation_type: Add No Template Control
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: sample, role: output, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: json, role: input, name: Options}
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protocol:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Debug'
needs 'Standard Libs/Pipettors'
needs 'Standard Libs/LabwareNames'
needs 'Collection Management/CollectionActions'
needs 'Collection Management/CollectionDisplay'
needs 'Microtiter Plates/PlateLayoutGenerator'
needs 'PCR Libs/PCRComposition'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'
needs 'Microtiter Plates/MicrotiterPlates'

# Protocol for setting up a master mix plate for RT-qPCR
# @note Instructions adapted from the CDC COVID-19 detection protocol
#   https://www.fda.gov/media/134922/download
#
# 12) Prior to moving to the nucleic acid handling area, prepare the
#   No Template Control (NTC) reactions for column #1 in the
#   assay preparation area.
#
# 13) Pipette 5 uL of nuclease-free water into the NTC sample wells
#   (Figure 2, column 1). Securely cap NTC wells before proceeding.
#
# 14) Cover the entire reaction plate and move the reaction plate to
#   the specimen nucleic acid handling area.
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  # Standard Libs
  include PlanParams
  include CommonInputOutputNames
  include Debug
  include Pipettors
  include LabwareNames

  # Collection Management
  include CollectionActions
  include CollectionDisplay

  # Diagnostic RT-qPCR
  include DataAssociationKeys

  WATER = 'Molecular Grade Water'
  RNA_FREE_WORKSPACE = 'reagent set-up room'
  PLATE = 'PCR Plate'

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      program_name: 'CDC_TaqPath_CG',
      group_size: 3,
      layout_method: 'cdc_sample_layout'
    }
  end

  ########## MAIN ##########

  def main
    setup_test_plates(operations: operations) if debug

    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    operations.retrieve

    operations.each do |op|
      op.pass(PLATE)
      add_no_template_controls(operation: op)
    end

    operations.store

    {}
  end

  # Add the no template controls to an Operation's putput collection
  #
  # @param operation [Operation]
  # @return [void]
  def add_no_template_controls(operation:)
    # Group_Size and Program name are attributes of the plate
    # and should be associated to the plate from Prepare Master Mix
    # This may not work because group size is different depending on whether
    #   talking about samples or primers
    # group_size = op.input(PLATE).collection.get(GROUP_SIZE_KEY)
    # program_name = op.input(PLATE).collection.get(COMPOSITION_NAME_KEY)

    collection = operation.output(PLATE).collection

    layout_group = add_ntc_data(
      collection: collection,
      group_size: operation.temporary[:options][:group_size],
      method: operation.temporary[:options][:layout_method]
    )

    composition = PCRCompositionFactory.build(
      program_name: operation.temporary[:options][:program_name]
    )

    show_add_ntc(
      collection: collection,
      volume: composition.water.qty_display,
      layout_group: layout_group
    )

    show_result(collection: collection) if debug
    inspect_data_associations(collection: collection) if debug
  end

  # Add metadata for a group of no template control samples, and return the
  #   locations of the group
  #
  # @param collection [Collection]
  # @param group_size [Fixnum]
  # @param method [String]
  # @return [Array<Array<Fixnum>>]
  def add_ntc_data(collection:, group_size:, method:)
    microtiter_plate = MicrotiterPlateFactory.build(
      collection: collection,
      group_size: group_size,
      method: method
    )

    # TODO: Do we want to have an item number for the water?
    microtiter_plate.associate_next_empty_group(
      key: TEMPLATE_KEY,
      data: WATER
    )
  end

  # Instruct technician to add the no template control samples to the plate
  #
  # @param collection [Collection]
  # @param volume [Fixnum]
  # @param layout_group [Array<Array<Fixnum>>]
  # @return [void]
  def show_add_ntc(collection:, volume:, layout_group:)
    show do
      title "Pipet No Template Control (NTC) samples into plate #{collection}"

      note "Pipet #{volume} of #{WATER} into the indicated wells of" \
        " plate #{collection}"
      table highlight_collection_rc(collection, layout_group, check: true)
    end
  end

  ########## DEBUG METHODS ##########

  # Populate all input plates with qPCR Reactions
  #
  # @param operations [OperationList]
  # @return [void]
  def setup_test_plates(operations:)
    operations.each do |op|
      setup_test_plate(collection: op.input(PLATE).collection)
    end
  end

  # Populate a collection with qPCR Reactions
  #
  # @param collection [Collection]
  # @return [void]
  def setup_test_plate(collection:)
    qpcr_reaction = Sample.find_by_name('Test qPCR Reaction')

    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: 24,
      method: :cdc_primer_layout
    )

    loop do
      layout_group = layout_generator.next_group
      break unless layout_group.present?

      layout_group.each do |r, c|
        collection.set(r, c, qpcr_reaction)
        part = collection.part(r, c)
        part.associate(MASTER_MIX_KEY, { foo: 'bar' })
      end
    end

    show_result(collection: collection)
    inspect_data_associations(collection: collection)
  end

  # Show all the non-empty wells of the test plate
  # @todo figure out what you really want to show here
  #
  # @param collection [Collection]
  # @return [void]
  def show_result(collection:)
    show do
      title 'Test Plate Setup'
      table highlight_non_empty(collection)
    end
  end

  # Inspect a subset of the parts and their data associations
  #
  # @param collection [Collection]
  # @return [void]
  def inspect_data_associations(collection:)
    [[0, 0], [0, 3], [0, 8]].each do |r, c|
      part = collection.part(r, c)
      inspect part, "part at #{[r, c]}"
      inspect part.associations, "data at #{[r, c]}"
    end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    ops = add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

sample_types:
  - {name: Diagnostic Samplle, description: Incoming sample for testing}
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object_types:
  - {name: Lyophilized RNA, description: Lyophilized RNA for control samples, handler: sample_container, unit: Diagnostic Samplle, release_method: return, sample_type_name: Diagnostic Samplle}
  - {name: Purified RNA in 1.5 ml Tube, description: Purified RNA in a 15 ml Eppendorf tube, handler: sample_container, unit: Diagnostic Samplle, release_method: return, prefix: M80, sample_type_name: Diagnostic Samplle}
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operation_type: Aliquot Positive Template
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Template, sample_types: [Diagnostic Samplle], object_types: [Lyophilized RNA], routing: T}
  - {ftype: sample, role: output, name: Template, sample_types: [Diagnostic Samplle], object_types: [Purified RNA in 1.5 ml Tube], routing: T}
  - {ftype: json, role: input, name: Options}
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protocol:
# Aliquot Positive Template
# Written By Rita Chen 2020-05-04
# Updated by Dany Fu 2020-06-01

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'

# 2019-nCoV Positive Control (nCoVPC) Preparation:
# 1) Precautions: This reagent should be handled with caution in a dedicated
# nucleic acid handling area to prevent possible contamination. Freeze-thaw
# cycles should be avoided. Maintain on ice when thawed.
# 2) Resuspend dried reagent in each tube in 1 mL of nuclease-free water to
# achieve the proper concentration. Make single use aliquots (approximately 30
# uL) and store at less than and equal to -70C.
# 3) Thaw a single aliquot of diluted positive control for each experiment and
# hold on ice until adding to plate. Discard any unused portion of the aliquot.
class Protocol
  include DiagnosticRTqPCRHelper

  VOL_WATER = { qty: 1, units: MILLILITERS }.freeze
  VOL_SUSPENSION = { qty: 30, units: MICROLITERS }.freeze
  OUTPUT_ITEMS_NUM = { qty: 33, units: TUBE_MICROFUGE }.freeze

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {}
  end

  ########## MAIN ##########

  def main
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    update_operation_params(
      operations: operations,
      default_operation_params: default_operation_params
    )

    # 1. Get 33 1.5 mL tube for each operation
    get_tubes(count: operations.length)
    operations.retrieve

    # 2. For each Lyophilized Postive Control, resuspend in 1 mL of
    # nuclease-free waterand, aliquot 33 use aliquots (approximately
    # 30 uL) and store at less than and equal to -70C.
    save_output(ops: operations)

    suspend_lyophilized_RNA
    keep_tubes = [] # Empty array for storing single use aliquots

    # Group the operations by the input reagent
    ops_by_input = operations.group_by { |op| op.input(TEMPLATE).item }
    ops_by_input.each do |lyophilized_rna, ops|
      keep_tubes.push(make_aliquots(ops: ops, lyophilized_rna: lyophilized_rna))
    end

    prepare_plating(keep_tubes: keep_tubes)

    # 3. Thaw a single aliquot of diluted positive control for each
    # experiment and hold on ice until adding to plate.
    # Discard any unused portion of the aliquot.
    operations.store(interactive: true, io: 'output', method: 'boxes')
  end

  # Get 33 1.5 mL tubes per dried positive control
  #
  # @param count [Integer] the number of operations
  def get_tubes(count:)
    show do
      title "Get new #{TUBE_MICROFUGE}"
      check "Please get #{count * OUTPUT_ITEMS_NUM[:qty]} #{TUBE_MICROFUGE}"
    end
  end

  # Label the tubes so that the same reagents have consecutive IDs
  # And move the output tubes to the right storage locations
  # @param operations [OperationList] The list of operations
  def save_output(ops:)
    ops.make

    # Declare references to output objects
    ops.each do |op|
      op.output(TEMPLATE).item.associate :volume, VOL_SUSPENSION[:qty]

      output_RNA = op.output(TEMPLATE).sample
      # makes 32 additional aliquots per op
      (OUTPUT_ITEMS_NUM[:qty] - 1).times do
        new_aliquot = output_RNA.make_item('Purified RNA in 1.5 mL tube')
        new_aliquot.associate :volume, VOL_SUSPENSION[:qty]
        link_output_item(operation: op, sample: output_RNA, item: new_aliquot)
      end
    end
  end

  # Manually link the item to the operation as an output
  #
  # @param op [Operation] the operation that creates the items
  # @param sample [Sample] the sample of the item
  # @param item [Item] the item that is created
  def link_output_item(operation:, sample:, item:)
    fv = FieldValue.new(
      name: TEMPLATE,
      child_item_id: item.id,
      child_sample_id: sample.id,
      role: 'output',
      parent_class: 'Operation',
      parent_id: operation.id,
      field_type_id: operation.output(TEMPLATE).field_type.id
    )
    fv.save
  end

  # Performs the resuspension protocol for a list of operations
  # that all use the given lyophilized_RNA input.
  def suspend_lyophilized_RNA()
    show do
      title 'Resuspend Positive Template'
      warning "This reagent should be handled with caution in a dedicated \
      nucleic acid handling area to prevent possible contamination."
      warning "Freeze-thaw cycles should be avoided. Maintain on ice when \
      thawed."
      check "Resuspend dried Lyophilized Postive Control RNA in each tube in \
      #{qty_display(VOL_WATER)} of nuclease-free water to achieve the \
      proper concentration."
    end
  end

  # Performs the aliquote protocol for a list of operations
  # that all use the given lyophilized_RNA input.
  # @param make_aliquots [Item] the lyophilized_RNA
  # @param operations     [OperationList] the list of operations
  def make_aliquots(ops:, lyophilized_rna:)
    last_tube_id = '' # Empty string for storing item id of single use aliquot
    ops.each do |op|
      input_rnas = Array.new(OUTPUT_ITEMS_NUM[:qty], lyophilized_rna.id)
      aliquot_tubes = op.outputs.map{ |output| output.item.id }
      transfer_table = Table.new
                            .add_column('Lyophilized RNA', input_rnas)
                            .add_column('Output RNA Aliquot', aliquot_tubes)

      show do
        title 'Aliquot Single Used Aliquot Positive Template'
        check "Make single use aliquot by transfering \
        #{qty_display(VOL_SUSPENSION)} of the diluted postive control into \
        individual #{TUBE_MICROFUGE} and label it with the proper item ID."
        check 'Discard the empty input tube'
        table transfer_table
      end

      # Discard the input
      lyophilized_rna.mark_as_deleted

      # Retrieve the last item of the single use aliquot
      last_tube_id = aliquot_tubes[-1]
    end
    last_tube_id
  end

  # Prepare for plating protocol for a list of operations
  # that all use the given Purified RNA in 1.5 mL tube output.
  # @param keep_tubes [Item] Items to be kept on bench for immediate use
  def prepare_plating(keep_tubes:)
    show do
      title 'Preparation of Single Aliquot for Plating'
      warning "This reagent should be handled with caution in a dedicated\
      nucleic acid handling area to prevent possible contamination."
      warning 'Avoid freeze-thaw cycles. Maintain on ice when thawed.'
      # Retrieve the last item of the single use aliquot
      check "Thaw a single aliquot of diluted positive control #{keep_tubes} \
      for each experiment and hold on ice until adding to plate."
      check 'Discard any unused portion of the aliquot.'
    end

    # Don't store the single aliquot being used during plating
    keep_tubes.each do |id| Item.find(id).mark_as_deleted end
  end
end

sample_types:
  - {name: Primer/Probe Mix, description: Primer/Probe Mix for qPCR}
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object_types:
  - {name: Lyophilized Primer Mix, description: Lyophilized Primer Mix, handler: sample_container, unit: Primer Mix, release_method: return, sample_type_name: Primer/Probe Mix}
  - {name: Primer Mix Aliquot, description: Primer Mix Aliquot, handler: sample_container, unit: Primer Mix, release_method: return, prefix: M20, sample_type_name: Primer/Probe Mix}
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operation_type: Aliquot Primer/Probe
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Primer/Probe Mix, sample_types: [Primer/Probe Mix], object_types: [Lyophilized Primer Mix], routing: P}
  - {ftype: sample, role: output, name: Primer/Probe Mix, sample_types: [Primer/Probe Mix], object_types: [Primer Mix Aliquot], routing: P}
  - {ftype: json, role: input, name: Options}
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protocol:
# Aliquot Primer Probe
# Written By Dany Fu 2020-05-05

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'

# 1) Upon receipt, store dried primers and probes at 2-8C.
# 2) Precautions: These reagents should only be handled in a clean area and
# stored at appropriate temperatures (see below) in the dark. Freeze-thaw cycles
# should be avoided. Maintain cold when thawed.
# 3) Using aseptic technique, suspend dried reagents in 1.5 mL of nuclease-free
# water (50X working concentration) and allow to rehydrate for 15 min at room
# temperature in the dark.
# 4) Mix gently and aliquot primers/probe in 300 uL volumes into 5 pre-labeled
# tubes. Store a single aliquot of primers/probe at 2-8oC in the dark. Do not
# refreeze (stable for up to 4 months). Store remaining aliquots at <= -20oC
# in a non-frost-free freezer.
class Protocol
  include DiagnosticRTqPCRHelper

  OUTPUT_ITEMS_NUM = { qty: 5, units: TUBE_MICROFUGE }.freeze
  TIME_REHYDRATE = { qty: 15, units: MINUTES }.freeze
  VOL_WATER = { qty: 1.5, units: MILLILITERS }.freeze
  VOL_SUSPENSION = { qty: 300, units: MICROLITERS }.freeze

  COLD_ROOM = 'M4'.freeze

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {}
  end

  ########## MAIN ##########

  def main
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    update_operation_params(
      operations: operations,
      default_operation_params: default_operation_params
    )

    get_tubes(count: operations.length)
    operations.retrieve

    save_output(operations)
    suspend_primer_mix

    # Group the operations by the input reagent
    ops_by_input = operations.group_by { |op| op.input(PRIMER_MIX).item }
    ops_by_input.each do |primer, ops|
      make_aliquots(ops: ops, primer: primer)
    end

    operations.store(interactive: true, io: 'output', method: 'boxes')
  end

  # Get 5 1.5 mL tubes per dried reagent
  # @param count [Integer] the number of operations currently running
  def get_tubes(count:)
    show do
      title "Get new #{TUBE_MICROFUGE}"
      check "Please get #{count * OUTPUT_ITEMS_NUM[:qty]} #{TUBE_MICROFUGE}"
    end
  end

  # Create and save multiple output Items per operation
  # @param operations [OperationList] List of operations
  def save_output(operations)
    operations.make

    operations.each do |op|
      op.output(PRIMER_MIX).item.associate :volume, VOL_SUSPENSION[:qty]

      output_primer = op.output(PRIMER_MIX).sample
      # makes 4 additional aliquots per op
      (OUTPUT_ITEMS_NUM[:qty] - 1).times do
        new_aliquot = output_primer.make_item('Primer Mix Aliquot')
        new_aliquot.associate :volume, VOL_SUSPENSION[:qty]
        link_output_item(operation: op, sample: output_primer, item: new_aliquot)
      end
    end
  end

  # Manually link the item to the operation as an output
  # @param op [Operation] the operation that creates the items
  # @param sample [Sample] the sample of the item
  # @param item [Item] the item that is created
  def link_output_item(operation:, sample:, item:)
    fv = FieldValue.new(
      name: PRIMER_MIX,
      child_item_id: item.id,
      child_sample_id: sample.id,
      role: 'output',
      parent_class: 'Operation',
      parent_id: operation.id,
      field_type_id: operation.output(PRIMER_MIX).field_type.id
    )
    fv.save
  end

  # Instructions for suspending dried reagents
  def suspend_primer_mix
    show do
      title 'Suspend Primer Mix'
      warning 'These reagents should only be handled in a clean area.'
      warning 'Avoid reeze-thaw cycles. Maintain on ice when thawed.'
      check "Using aseptic technique, suspend each dried primer in \
             #{qty_display(VOL_WATER)} of nuclease-free water."
      check "Rehydrate for #{qty_display(TIME_REHYDRATE)} at room temperature \
            in the dark."
      timer initial: { minutes: TIME_REHYDRATE[:qty] }
    end
  end

  # Make 5 aliquots for each primer
  # @param operations [OperationList] Array of operations grouped by primer
  def make_aliquots(ops:, primer:)
    last_tube_id = '' # keep one of each primer
    ops.each do |op|
      input_primers = Array.new(OUTPUT_ITEMS_NUM[:qty], primer.id)
      aliquot_tubes = op.outputs.map { |output| output.item.id }
      transfer_table = Table.new
                            .add_column('Primer Mix ID', input_primers)
                            .add_column('Destination Tube ID', aliquot_tubes)

      show do
        title 'Make Aliquots'
        check 'Label destination tube IDs according to the table.'
        check "Mix solution gently and aliquot #{qty_display(VOL_SUSPENSION)} \
              of rehydrated primer into each tube according to the table."
        table transfer_table
      end

      primer.mark_as_deleted # discard the input
      last_tube_id = aliquot_tubes[-1]
    end

    # One aliquot of each primer mix should be stored in the cold room instead
    # of freezer. However, this code doesn't actually work as one ObjectType
    # can only be associated with one location.
    # Leaving this here for completeness.
    last_tube = Item.find(last_tube_id)
    last_tube.move(COLD_ROOM)
    last_tube.store
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

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object_types:
  - {name: Patient Swab, description: Nasopharyngeal Swab, handler: sample_container, unit: each, release_method: return, prefix: M80, sample_type_name: Diagnostic Samplle}
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operation_type: Extract RNA
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Specimen, sample_types: [Diagnostic Samplle], object_types: [Patient Swab], routing: S}
  - {ftype: sample, role: output, name: Specimen, sample_types: [Diagnostic Samplle], object_types: [Purified RNA in 1.5 ml Tube], routing: S}
  - {ftype: json, role: input, name: Options}
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protocol:
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/RNAExtractionHelper'

# Extract RNA Protocol
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include RNAExtractionHelper

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      rna_extraction_kit: TestRNAExtractionKit::NAME
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      sample_volume: { qty: 300, units: MICROLITERS }
    }
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make
    
    set_kit(name: @job_params[:rna_extraction_kit])
    
    
    sample_volumes = operations.map { |op| sample_volume(op) }
    if sample_volumes.uniq.length == 1
      run_rna_extraction_kit(
        operations: operations,
        sample_volume: sample_volumes.first
      )
    else
      run_rna_extraction_kit(
        operations: operations,
        #use_operations: true
      )
    end

    operations.store

    {}
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

operation_type: Extract RNA HTP
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Specimen, routing: S}
  - {ftype: sample, role: output, name: Specimen, routing: T}
  - {ftype: json, role: input, name: Options}
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protocol:
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/RNAExtractionHelper'

# Extract RNA Protocol
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include RNAExtractionHelper

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      rna_extraction_kit: TestRNAExtractionKit::NAME
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      sample_volume: { qty: 300, units: MICROLITERS }
    }
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    set_kit(name: @job_params[:rna_extraction_kit])

    sample_volumes = operations.map { |op| sample_volume(op) }
    if sample_volumes.uniq.length == 1
      run_rna_extraction_kit(
        operations: operations,
        sample_volume: sample_volumes.first
      )
    else
      run_rna_extraction_kit(
        operations: operations,
        use_operations: true
      )
    end

    operations.store

    {}
  end
end

test:
# test

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operation_type: Prepare Master Mix
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: sample, role: input, name: Primer/Probe Mix, sample_types: [Primer/Probe Mix], object_types: [Primer Mix Aliquot], array: true, routing: M}
  - {ftype: json, role: input, name: Options}
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protocol:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Debug'
needs 'Standard Libs/Pipettors'
needs 'Standard Libs/LabwareNames'
needs 'Collection Management/CollectionActions'
needs 'Collection Management/CollectionDisplay'
needs 'Microtiter Plates/MicrotiterPlates'
needs 'PCR Libs/PCRComposition'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

# Protocol for setting up a master mix plate for RT-qPCR
# @note Instructions adapted from the CDC COVID-19 detection protocol
#   https://www.fda.gov/media/134922/download
#
# 1) In the reagent set-up room clean hood, place rRT-PCR buffer, enzyme,
#     and primer/probes on ice or cold-block. Keep cold during preparation
#     and use.
#
# 2) Mix buffer, enzyme, and primer/probes by inversion 5 times.
#
# 3) Centrifuge reagents and primers/probes for 5 seconds to collect
#     contents at the bottom of the tube, and then place the tube in
#     a cold rack.
#
# 4) Label one 1.5 mL microcentrifuge tube for each primer/probe set.
#
# 5) Determine the number of reactions (N) to set up per assay.
#   It is necessary to make excess reaction mix for the NTC, nCoVPC,
#   HSC (if included in the RT-PCR run), and RP reactions and for pipetting
#   error. Use the following guide to determine N:
#     - If number of samples (n) including controls equals 1 through 14,
#       then N = n + 1
#     - If number of samples (n) including controls is 15 or greater,
#       then N = n + 2
#
# 7) For each primer/probe set, calculate the amount of each reagent
#   to be added for each reaction mixture (N = # of reactions).
#
# 8) Dispense reagents into each respective labeled 1.5 mL microcentrifuge
#   tube. After addition of the reagents, mix reaction mixtures by
#   pipetting up and down. Do not vortex.
#
# 9) Centrifuge for 5 seconds to collect contents at the bottom of
#   the tube, and then place the tube in a cold rack.
#
# 10) Set up reaction strip tubes or plates in a 96-well cooler rack.
#
# 11) Dispense 15 uL of each master mix into the appropriate wells going
#   across the row
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  # Standard Libs
  include PlanParams
  include CommonInputOutputNames
  include Debug
  include Pipettors
  include LabwareNames

  # Collection Management
  include CollectionActions
  include CollectionDisplay

  # Diagnostic RT-qPCR
  include DataAssociationKeys

  WATER = 'Molecular Grade Water'
  RNA_FREE_WORKSPACE = 'reagent set-up room'
  PLATE = 'PCR Plate'
  PRIMER_MIX = 'Primer/Probe Mix'

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {}
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      number_of_reactions: 24,
      group_size: 24,
      program_name: 'CDC_TaqPath_CG',
      layout_method: 'cdc_primer_layout'
    }
  end

  ########## MAIN ##########

  def main
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    provision_plates(
      operations: operations,
      object_type: '96-well qPCR Plate'
    )

    prepare_materials(operations: operations)

    assemble_master_mix_plates(operations: operations)

    operations.store

    inspect_data_associations(operation: operations.first) if debug

    {}
  end

  # Creates and assigns an output collection for each operation, and fills it
  #   with the output sample according to the provided PlateLayoutGenerator
  #   method
  # @note In debug mode, displays the matrix of each collection
  #
  # @param operations [OperationList]
  # @param object_type [String] the ObjectType of the collection to be made
  # @return void
  def provision_plates(operations:, object_type:)
    operations.each do |op|
      collection = make_new_plate(object_type, label_plate: true)
      op.output(PLATE).set(collection: collection)

      set_parts(
        collection: collection,
        group_size: op.temporary[:options][:group_size],
        method: op.temporary[:options][:layout_method],
        sample: op.output(PLATE).sample
      )

      inspect op.output(PLATE).collection.matrix if debug
    end
  end

  # Fills a collection with the provided sample according to the provided
  #   PlateLayoutGenerator method
  #
  # @param collection [Collection]
  # @param group_size [Fixnum]
  # @param method [String] a PlateLayoutGenerator method
  # @param sample [Sample] the Sample to add to the collection
  # @return void
  def set_parts(collection:, group_size:, method:, sample:)
    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: group_size,
      method: method
    )

    loop do
      index = layout_generator.next
      break unless index.present?
      collection.set(index[0], index[1], sample)
    end
  end

  # Prepare workspace and materials
  #
  # @todo Make this handle master mix or enzyme with separate buffer dynamically
  # @param operations [OperationList]
  def prepare_materials(operations:)
    show_prepare_workspace
    operations.retrieve
    show_mix_and_spin_reagents
  end

  # Assembles a master mix plate for each operation
  #
  # @param operations [OperationList]
  # @return void
  def assemble_master_mix_plates(operations:)
    operations.each { |op| assemble_master_mix_plate(operation: op) }
  end

  # Assembles a master mix plate for an operation
  #
  # @param operation [Operation]
  # @return void
  def assemble_master_mix_plate(operation:)
    primer_mixes = operation.input_array(PRIMER_MIX).map(&:item)
    output_collection = operation.output(PLATE).collection

    show_label_mmix_tubes(labels: primer_mixes.map { |pm| pm.sample.name })

    group_size = operation.temporary[:options][:group_size]
    program_name = operation.temporary[:options][:program_name]
    composition = PCRCompositionFactory.build(
      program_name: program_name
    )
    
    
    output_collection.associate(COMPOSITION_NAME_KEY, program_name)
    output_collection.associate(PRIMER_GROUP_SIZE_KEY, group_size)

    master_mixes = make_master_mixes(
      primer_mixes: primer_mixes,
      composition: composition,
      sample_number: sample_number_with_excess(sample_number: group_size)
    )

    microtiter_plate = MicrotiterPlateFactory.build(
      collection: output_collection,
      group_size: group_size,
      method: :cdc_primer_layout
    )
    master_mixes.each do |master_mix|
      pipet_master_mix(
        master_mix: master_mix,
        volume: composition.sum_added_components,
        microtiter_plate: microtiter_plate
      )
    end
  end

  # Makes large volume master mixes to be distributed among wells
  #
  # @param primer_mixes [Array<Item>]
  # @param composition [PCRComposition]
  # @param sample_number [Fixnum] the number samples for each primer
  # @return [Array<Hash>] a data structure that documents the provenance of the
  #   master mixes
  def make_master_mixes(primer_mixes:, composition:, sample_number:)
    show_make_master_mixes(
      primer_mixes: primer_mixes,
      composition: composition,
      sample_number: sample_number
    )

    build_master_mix_data(
      primer_mixes: primer_mixes,
      composition: composition
    )
  end

  # Pipet the master mixes to individual wells
  #
  # @todo make volume a qty, units Hash
  # @param master_mix [Hash] a data structure documenting the provenance of the
  #   master mix
  # @param volume [Numeric]
  # @param microtiter_plate [MicrotiterPlate]
  # @return void
  def pipet_master_mix(master_mix:, volume:, microtiter_plate:)
    layout_group = microtiter_plate.associate_next_empty_group(
      key: MASTER_MIX_KEY,
      data: master_mix[:data]
    )

    show_pipet_mmix(
      primer_mix_name: master_mix[:primer_mix].sample.name,
      volume: volume,
      collection: microtiter_plate.collection,
      layout_group: layout_group
    )
  end

  ########## DATA METHODS ##########

  # Compute the number of 'extra' master mixes to make to account for
  #   pipetting error
  #
  # @param sample_number [Fixnum]
  # @return [Fixnum]
  def sample_number_with_excess(sample_number:)
    sample_number < 15 ? sample_number + 1 : sample_number + 2
  end

  # Build the data structure that documents the provenance of the
  #   master mixes
  #
  # @param primer_mixes [Array<Item>]
  # @param composition [PCRComposition]
  # @return [Array<Hash>] a data structure that documents the provenance of the
  #   master mixes
  def build_master_mix_data(primer_mixes:, composition:)
    master_mixes = []
    primer_mixes.each do |primer_mix|
      mm = master_mix_data(primer_mix: primer_mix, composition: composition)
      master_mixes.append(mm)
    end
    master_mixes
  end

  # Build the data structure that documents the provenance of a
  #   master mix
  #
  # @param primer_mix [Item]
  # @param composition [PCRComposition]
  # @return [Hash] a data structure that documents the provenance of a
  #   master mix
  def master_mix_data(primer_mix:, composition:)
    {
      primer_mix: primer_mix,
      data: {
        PRIMER_PROBE_MIX_KEY => {
          item_id: primer_mix.id,
          volume: composition.primer_probe_mix.qty_display
        },
        MASTER_MIX_STOCK_KEY => {
          sample_name: composition.master_mix.display_name,
          volume: composition.master_mix.qty_display
        }
      }
    }
  end

  ########## SHOW METHODS ##########

  # Instruct technician to do everything necessary to prepare the workspace
  #
  # @return [void]
  def show_prepare_workspace
    show do
      title 'Prepare workspace'

      note "All tasks in this protocol occur in the #{RNA_FREE_WORKSPACE}."
      note 'As you retrieve reagents, place them on ice or in a cold-block.'
    end
  end

  # Instruct technician to mix the incoming reagents and spin down the tubes
  #
  # @return [void]
  def show_mix_and_spin_reagents
    show do
      title 'Mix and spin down reagents'

      note 'Mix buffer, enzyme, and primer/probes by inversion 5 times.'
      note 'Centrifuge reagents and primers/probes for 5 seconds to collect' \
        ' contents at the bottom of the tube.'
      note 'Place the tubes on ice or in a cold-block.'
    end
  end

  # Instruct technician to label the tubes that will contain the master mixes
  #
  # @param labels [Array<String>]
  # @return [void]
  def show_label_mmix_tubes(labels:)
    n = labels.length
    labels = labels.map { |label| "<b>#{label}</b>" }
    show do
      title 'Label master mix tubes'

      note "Take out #{n} #{TUBE_MICROFUGE.pluralize(n)}"
      note "Write #{labels.to_sentence} on the tops of each tube"
    end
  end

  # Instruct technician to make large volume master mixes to be
  #   distributed among wells
  #
  # @param primer_mixes [Array<Item>]
  # @param composition [PCRComposition]
  # @param sample_number [Fixnum]
  # @return [void]
  def show_make_master_mixes(primer_mixes:, composition:, sample_number:)
    show do
      title 'Pipet master mix components'

      note 'Pipet the following components into each labeled master mix tube'
      table master_mix_table(
        composition: composition,
        sample_number: sample_number
      )
      separator

      note 'Pipet the primer/probe mixes into each corresponding' \
        ' master mix tube'
      table primer_probe_table(
        primer_mixes: primer_mixes,
        composition: composition,
        sample_number: sample_number
      )
    end
  end

  # Instruct technician to pipet a master mix into the plate
  #
  # @param primer_mix_name [String]
  # @param volume [Numeric]
  # @param collection [Collection]
  # @param layout_group [Array<Fixnum>]
  # @return [void]
  def show_pipet_mmix(primer_mix_name:, volume:, collection:, layout_group:)
    show do
      title "Pipet #{primer_mix_name} master mix into plate"

      note "Pipet #{volume} #{MICROLITERS} of #{primer_mix_name}" \
        " master mix into the plate #{collection}"
      table highlight_collection_rc(collection, layout_group, check: false)
    end
  end

  ########## TABLE METHODS ##########

  # Build table for volumes of master mix components
  #
  # @param composition [PCRComposition]
  # @param sample_number [Fixnum]
  # @return [Array<Array>] a 2D array formatted for the `table` method in Krill
  def master_mix_table(composition:, sample_number:)
    header = [
      'Component',
      composition.master_mix.display_name,
      composition.water.display_name
    ]
    row = [
      "Volume (#{MICROLITERS})",
      composition.master_mix.add_in_table(sample_number),
      composition.water.add_in_table(sample_number)
    ]
    [header, row].transpose
  end

  # Build table for volumes of master mix components
  #
  # @param composition [PCRComposition]
  # @param sample_number [Fixnum]
  # @return [Array<Array>] a 2D array formatted for the `table` method in Krill
  def primer_probe_table(primer_mixes:, composition:, sample_number:)
    table = [[
      composition.primer_probe_mix.display_name,
      'Item',
      "Volume (#{MICROLITERS})"
    ]]
    primer_mixes.each do |primer_mix|
      row = [
        primer_mix.sample.name,
        primer_mix.to_s,
        composition.primer_probe_mix.add_in_table(sample_number)
      ]
      table.append(row)
    end
    table
  end

  def inspect_data_associations(operation:)
    collection = operation.output(PLATE).collection
    [[0, 0], [0, 3], [0, 8]].each do |r, c|
      part = collection.part(r, c)
      inspect part, "part at #{[r, c]}"
      inspect part.associations, "data at #{[r, c]}"
    end
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)

  #   mm = Sample.find_by_name('TaqPath 1-Step RT-qPCR Master Mix')
  #   p1 = Sample.find_by_name('2019-nCoV_N1')
  #   p2 = Sample.find_by_name('2019-nCoV_N2')
  #   p3 = Sample.find_by_name('RNase P')

  #   add_operation
  #     .with_property("Options", '{ "magic_number": 24, "foo": "baz" }')
  #     .with_input('Enzyme Master Mix', mm)
  #     .with_input('Primer/Probe Mix', p1)
  #     .with_input('Primer/Probe Mix', p2)
  #     .with_input('Primer/Probe Mix', p3)
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

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operation_type: Prepare RT-qPCR Plate
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Template, sample_types: [Diagnostic Samplle], object_types: [Purified RNA in 1.5 ml Tube], array: true, routing: T}
  - {ftype: sample, role: input, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: sample, role: output, name: PCR Plate, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: json, role: input, name: Options}
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protocol:
# typed: false
# frozen_string_literal: true

needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'
needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRDebug'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'
needs 'PCR Libs/PCRComposition'
needs 'Microtiter Plates/MicrotiterPlates'
needs 'Collection Management/CollectionTransfer'

# Protocol for setting up a plate with extracted RNA samples
#
# @author Devin Strickland <strcklnd@uw.edu>
# @author Cannon Mallory <malloc3@uw.edu>
class Protocol
  include DiagnosticRTqPCRHelper
  include DiagnosticRTqPCRDebug
  include MicrotiterPlates
  include CollectionTransfer
  include DataAssociationKeys

  METHOD = :cdc_sample_layout

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      max_inputs: 24
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      negative_template_control: nil,
      negative_template_location: nil,
      positive_template_control: 'nCoVPC',
      positive_template_location: [0, 11],
      group_size: 3
    }
  end

  def main
    #========= Setup Job ==========#
    setup_test(operations) if debug
    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )

    #========= Validation =========#
    validate(operations: operations)
    return {} if operations.errored.any?

    #====== General Warnings =====#
    rnase_warning
    safety_warning

    operations.retrieve.make

    #====== Core Operation ======#
    operations.each do |op|
      op.pass(PLATE)
      output_collection = op.output(PLATE).collection
      group_size = op.temporary[:options][:group_size]
      output_collection.associate(SAMPLE_GROUP_SIZE_KEY, group_size)
      program_name = output_collection.get(COMPOSITION_NAME_KEY)

      microtiter_plate = MicrotiterPlateFactory.build(
        collection: output_collection,
        group_size: group_size,
        method: METHOD
      )

      composition = PCRCompositionFactory.build(
        program_name: program_name
      )
      volume = { qty: composition.template.qty,
                 units: composition.template.units }

      remaining_inputs = add_control_samples(
        operation_inputs: op.input_array(TEMPLATE),
        microtiter_plate: microtiter_plate,
        volume: volume,
        operation_parameters: op.temporary[:options]
      )

      add_diagnostic_samples(
        operation_inputs: remaining_inputs,
        microtiter_plate: microtiter_plate,
        volume: volume
      )

      seal_plate(output_collection)
      show_result(collection: output_collection) if debug
    end

    operations.store

    {}
  end

  # Provides instructions and handling for addition of control
  # samples.  Returns all inputs that are NOT control inputs
  #
  # @param operation_inputs [Array<item>]
  # @param collection [Collection]
  # @param layout_generator [LayoutGenerator]
  # @param volume [{aty: int, unit: string}]
  # @return operation_inputs [Array<item>]
  def add_control_samples(operation_inputs:, microtiter_plate:,
                          volume:, operation_parameters:)
    %w[negative_template positive_template].each do |stub|
      name = operation_parameters["#{stub}_control".to_sym]
      loc = operation_parameters["#{stub}_location".to_sym]

      next unless name.present? && loc.present?

      control_inputs, operation_inputs = operation_inputs.partition do |fv|
        fv.sample.name == name
      end

      add_samples(
        operation_inputs: control_inputs,
        microtiter_plate: microtiter_plate,
        volume: volume,
        column: loc[1]
      )

      # negative control samples need to be covered after addition
      next unless stub.include?('negative')

      seal_plate(collection, rc_list: get_rna_samples(collection))
    end
    operation_inputs
  end

  # Provides instructions to add diagnostic samples to collection
  #
  # @param operation_inputs [Array<items>]
  # @param collection [Collection]
  # @param layout_generator [LayoutGenerator]
  # @param volume [{aty: int, unit: string}]
  def add_diagnostic_samples(operation_inputs:, microtiter_plate:,
                            volume:)
    add_samples(
      operation_inputs: operation_inputs,
      microtiter_plate: microtiter_plate,
      volume: volume
    )
  end

  # validates operations and ensures that they are formatted as expected
  #
  # @param operations [OperationList]
  def validate(operations:)
    operations.each do |op|
      if op.input_array(TEMPLATE).length > @job_params[:max_inputs]
        raise IncompatibleInputsError, "Too many inputs for Operation #{op.id}"
      end
    end
  rescue IncompatibleInputsError => e
    error_operations(operations: operations, err: e)
  end

  # Say you're quitting due to an error and error all the operations
  #
  def error_operations(operations:, err:)
    show do
      title 'Incompatible Inputs Detected'
      warning err.message
    end

    operations.each { |op| op.error(:incompatible_inputs, err.message) }
  end

  class IncompatibleInputsError < ProtocolError; end
  class NoAvailableWells < ProtocolError; end
end

test:
class ProtocolTest < ProtocolTestBase
    def setup
      add_random_operations(1)
    end
  
    def analyze
      log('Hello from Nemo')
      assert_equal(@backtrace.last[:operation], 'complete')
    end
  end

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operation_type: Run qPCR
category: Diagnostic RT-qPCR
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
  - {ftype: json, role: input, name: Options}
  - {ftype: sample, role: output, name: qPCR Reactions, sample_types: [qPCR Reaction], object_types: [96-well qPCR Plate], routing: P}
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protocol:
# frozen_string_literal: true

needs 'PCR Libs/PCRComposition'
needs 'PCR Libs/PCRProgram'
needs 'Thermocyclers/Thermocyclers'
needs 'Standard Libs/PlanParams'
needs 'Standard Libs/Debug'

# Protocol for loading samples into a qPCR thermocycler and running it
#
# @author Devin Strickland <strcklnd@uw.edu>
# @todo Decide whether this is actually qPCR specific
class Protocol
  include ThermocyclerHelper
  include PlanParams
  include Debug

  INPUT_REACTIONS = 'qPCR Reactions'

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      thermocycler_model: TestThermocycler::MODEL,
      program_name: 'CDC_TaqPath_CG',
      qpcr: true
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {}
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug

    @job_params = update_job_params(
      operations: operations,
      default_job_params: default_job_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    composition = PCRCompositionFactory.build(
      program_name: @job_params[:program_name]
    )
    program = PCRProgramFactory.build(
      program_name: @job_params[:program_name],
      volume: composition.volume
    )
    thermocycler = ThermocyclerFactory.build(
      model: @job_params[:thermocycler_model]
    )

    set_up_program(
      thermocycler: thermocycler,
      program: program,
      composition: composition,
      qpcr: @job_params[:qpcr]
    )

    load_plate_and_start_run(
      thermocycler: thermocycler,
      items: operations.map { |op| op.input(INPUT_REACTIONS).item },
      experiment_filename: experiment_filename
    )

    export_measurements(thermocycler: thermocycler)

    operations.store

    {}
  end

  ########## NAMING METHODS ##########

  # Constructs a name for the experiment file.
  #
  # @return [String]
  def experiment_filename
    date = DateTime.now.strftime('%Y-%m-%d')
    "#{date}_Job_#{job.id}"
  end

  # Gets the currently active `Job`
  #
  # @return [Job]
  def job
    operation_ids = operations.map(&:id)
    ja_ids = JobAssociation.where(operation_id: operation_ids).map(&:job_id).uniq
    jobs = Job.find(ja_ids).select(&:active?)
    raise ProtocolError, 'Cannot resolve the current Job' if jobs.length > 1

    jobs.last
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    add_random_operations(1)
    # [1..3].each do |i|
    #   s = Sample.find_by_name("Test qPCR Reaction #{i}")
    #   add_operation
    #     .with_input('qPCR Reactions', s)
    #     .with_property('Options', '{"thermocycler_model": "BioRad CFX96", "program_name": "CDC_qScript_XLT_ToughMix"}')
    #     .with_output('qPCR Reactions', s)
    # end
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end

library: {name: DataAssociationKeys, category: Diagnostic RT-qPCR}
code_source:
# frozen_string_literal: true

module DataAssociationKeys
  PRIMER_GROUP_SIZE_KEY = 'primer_group_size'
  COMPOSITION_NAME_KEY = 'composition_name'
  MASTER_MIX_KEY = 'master_mix'
  MASTER_MIX_STOCK_KEY = 'master_mix_stock'
  PRIMER_PROBE_MIX_KEY = 'primer_probe_mix'
  TEMPLATE_KEY = 'template'
  SAMPLE_GROUP_SIZE_KEY = 'sample_group_size'
end

library: {name: DiagnosticRTqPCRDebug, category: Diagnostic RT-qPCR}
code_source:
# typed: false
# frozen_string_literal: true
needs 'Collection Management/CollectionTransfer'
needs 'Diagnostic RT-qPCR/DiagnosticRTqPCRHelper'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

module DiagnosticRTqPCRDebug
  include CollectionTransfer
  include DiagnosticRTqPCRHelper
  include DataAssociationKeys

  VERBOSE = false

  def debug_parameters
    {
      group_size: 3,
      program_name: 'CDC_TaqPath_CG',
      debug_primer: [5, 8, 9], # rp, n1, n2,
      debug_template: 'template',
      debug_sample_names: ['nCovPC',
                           'Test Patient 01',
                           'Test Patient 02'],
      debug_object_type: 'Purified RNA in 1.5 ml Tube'
    }
  end

  def setup_test(operations)
    operations.each do |op|
      setup_test_plate(collection: op.input('PCR Plate').collection)
      op.set_input('Template',
                   generate_samples(debug_parameters[:debug_sample_names],
                                    debug_parameters[:debug_object_type]))
    end
  end

  # Populate test plate with qPCR Reactions and one no template control (NTC)
  #
  def setup_test_plate(collection:)
    verbose = false
    key = TEMPLATE_KEY
    collection.associate(COMPOSITION_NAME_KEY, debug_parameters[:program_name])
    collection.associate(SAMPLE_GROUP_SIZE_KEY, debug_parameters[:group_size])
    qpcr_reaction = Sample.find_by_name('Generic qPCR Reaction')
    ntc_item = Item.find(48)
    layout_generator = PlateLayoutGeneratorFactory.build(
      group_size: debug_parameters[:group_size],
      method: :cdc_sample_layout
    )
    i = 0
    loop do
      layout_group = layout_generator.next_group
      break unless layout_group.present?
      layout_group.each do |r, c|
        collection.set(r, c, qpcr_reaction)
        next if i.positive?
        part = collection.part(r, c)
        inspect part, "part at #{[r, c]}" if verbose
        part.associate(key, ntc_item)
        inspect part.associations, "#{key} at #{[r, c]}" if verbose
      end
      i += 1
    end
    show_result(collection: collection) if verbose
    inspect collection.parts.to_s if verbose
  end

  def generate_samples(debug_sample_names, object_type)
    debug_items = []
    debug_sample_names.each do |sample_name|
      item = Sample.find_by_name(sample_name).make_item(object_type)
      item.mark_as_deleted
      debug_items.push(item)
    end
    debug_items
  end

  def show_result(collection:)
    show do
      table highlight_non_empty(collection)
    end
  end

end

library: {name: DiagnosticRTqPCRHelper, category: Diagnostic RT-qPCR}
code_source:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/CommonInputOutputNames'
needs 'Standard Libs/Debug'
needs 'Standard Libs/Pipettors'
needs 'Standard Libs/LabwareNames'
needs 'Collection Management/CollectionActions'
needs 'Collection Management/CollectionDisplay'
needs 'Collection Management/CollectionTransfer'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

# Module for elements that are common throughout Diagnostic RT qPCR
#
# @author Devin Strickland <strcklnd@uw.edu>
module DiagnosticRTqPCRHelper
  # Standard Libs
  include Units
  include PlanParams
  include CommonInputOutputNames
  include Debug
  include Pipettors
  include LabwareNames

  # Collection Management
  include CollectionActions
  include CollectionDisplay
  include CollectionTransfer

  #Diagnostic RT-qPCR
  include DataAssociationKeys

  WATER = 'Molecular Grade Water'
  RNA_FREE_WORKSPACE = 'reagent set-up room'
  PLATE = 'PCR Plate'
  PRIMER_MIX = 'Primer/Probe Mix'
  TEMPLATE = 'Template'

  def rnase_warning
    show do
      title 'RNase degrades RNA'
      note 'RNA is prone to degradation by RNase present in our eyes, skin, and breath.'
      note 'Avoid opening tubes outside the Biosafety Cabinet (BSC).'
      bullet 'Change gloves whenever you suspect potential RNAse contamination'
    end
  end

  def safety_warning
    show do
      title 'Review Safety Warnings'
      note '<b>Always</b> pay attention to orange warning blocks throughout the protocol.'
      warning '<b>INFECTIOUS MATERIALS</b>'
      note 'You will be working with infectious materials.'
      note 'Do <b>ALL</b> work in a biosafety cabinet (BSC).'
      note '<b>PPE is required</b>'
      check 'Put on lab coat.'
      check 'Put on 2 layers of gloves.'
      bullet 'Make sure to use tight gloves. Tight gloves reduce the chance of the gloves getting caught on the tubes when closing their lids.'
      bullet 'Change outer layer of gloves after handling infectious sample and before touching surfaces outside of the BSC (such as a refrigerator door handle).'
    end
  end

  # TODO: Think about how to switch this to row-wise addition.
  # Adds samples to to collections, provides instructions to tech
  #
  # @param operation_inputs [Array<items>]
  # @param collection [Collection]
  # @param layout_generator [LayoutGenerator]
  # @param volume [{aty: int, unit: string}]
  # @param column [int]
  def add_samples(operation_inputs:, microtiter_plate:,
                  volume:, column: nil)
    operation_inputs.each do |fv|
      item = fv.item
      layout_group = microtiter_plate.associate_next_empty_group(
        key: TEMPLATE_KEY,
        data: { item: item.id, volume: volume },
        column: column
      )

      association_map = []
      layout_group.each { |r, c| association_map.push({ to_loc: [r, c] }) }
      single_channel_item_to_collection(to_collection: microtiter_plate.collection,
                                        source: item,
                                        volume: volume,
                                        association_map: association_map)
    end
  end

end

library: {name: PrepareRTqPCRValidation, category: Diagnostic RT-qPCR}
code_source:
# frozen_string_literal: true

module PrepareRTqPCRValidation

  # Validates that all operations are as expected
  #
  # @param operations [OperationList] list of operations
  # @raise rescue will Error any operations that do not pass validation
  def validate(operation:, job_params:)
    valid_op = true

    valid_input, input_error = validate_inputs(operation, job_params)
    valid_contents, content_error = validate_contents(operation, job_params)
    unless valid_input
      valid_op = false
      operation.error(:IncompatibleInputsError, input_error)
      display_error([{ op: operation, error: content_error }])
    end

    unless valid_contents
      valid_op = false
      operation.error(:InvalidContentsError, content_error)
      display_error([{ op: operation, error: content_error }])
    end

    valid_op
  end

  def display_error(error_list)
    error_type = error_list.first[:error]
    tab = [['<b>Operation<b>', '<b>Error Message</b>']]
    error_list.each do |err|
      tab.push([err[:op].id, err[:error]])
    end

    show do
      title 'Operation Error'
      note "The following operations had #{error_type}"
      table tab
    end
  end

  def validate_contents(op, job_params)
    [true, nil]
  end

  def validate_inputs(op, job_params)
    [true, nil]
  end

  class IncompatibleInputsError < ProtocolError; end
  class InvalidContentsError < ProtocolError; end

end

library: {name: PrepareqPCRPlateHelper, category: Diagnostic RT-qPCR}
code_source:
# frozen_string_literal: true

needs 'PCR Libs/PCRCompositionDefinitions'
needs 'Collection Management/CollectionTransfer'
needs 'Standard Libs/WorkSpace'
needs 'Diagnostic RT-qPCR/DataAssociationKeys'

# Protocol methods for setting up plate withe extracted RNA Samples
#
# @author Devin Strickland <strklnd@uw.edu>
# @author Cannon Mallory <malloc3@uw.edu>
module PrepareqPCRPlateHelper

  include PCRCompositionDefinitions
  include CollectionTransfer
  include DataAssociationKeys

  attr_reader :template

  OPTIONS = 'options'
  INPUT_PLATE = 'PCR Plate'
  OUTPUT_PLATE = 'PCR Plate'
  ASSAY_TYPE = 'Assay Type'

  def add_inputs(collection:, samples:, volume:, station:)
    return if samples.empty?

    move_to_station(station)
    layout_materials(samples + [collection])

    samples.each do |item|
      association_map = to_association_map(collection: collection,
                                           item: item.sample)
      single_channel_item_to_collection(to_collection: collection,
                                        source: item.id,
                                        volume: volume,
                                        association_map: association_map)
    end
  end

  def update_parameters(operation:,
                        default_operation_params:,
                        default_job_params:)

    determine_default_job_params(operation: operation,
                                 default_job_params: default_job_params)
    opts = operation.plan.associations[:Options]
    default_job_params.update(update_plan_params(plan_params: default_operation_params,
                                                 opts: opts))
  end

  def determine_default_job_params(operation:, default_job_params:)
    input_plate = operation.input(INPUT_PLATE).collection
    default_job_params[:template] = get_composition_def(
      name: input_plate.get(COMPOSITION_NAME_KEY))[:template]
    @template = default_job_params[:template][:input_name]
    group_size = input_plate.get('group_size'.to_sym).to_i
    rows, columns = input_plate.dimensions
    default_job_params[:group_size] = group_size
    default_job_params[:max_inputs] = rows / group_size * columns
  end

  def setup_input_output_collections(input_collection:)
    output_collection = exact_copy(input_collection, label_plates: false)
    association_map = one_to_one_association_map(to_collection: output_collection,
                                                 from_collection: input_collection)

    associate_transfer_collection_to_collection(to_collection: output_collection,
                                                from_collection: input_collection,
                                                association_map: association_map)

    relabel_plate(from_collection: input_collection,
                  to_collection: output_collection)
    output_collection
  end

  def sort_inputs(negative_control:, positive_control:, operation_inputs:)
    remaining_inputs = []
    negative_controls = []
    positive_controls = []
    operation_inputs.each do |input|
      input_name = input.sample.name

      if input_name.include?(negative_control)
        negative_controls.push(input)
      elsif input_name.include?(positive_control)
        positive_controls.push(input)
      else
        remaining_inputs.push(input)
      end
    end
    {negative_control: negative_controls,
     positive_control: positive_controls,
     standard_sample: remaining_inputs}
  end

  def setup_samples(operation_inputs:,
                    collection:,
                    layout_generator:,
                    names_to_avoid: [],
                    column: nil)
    operation_inputs.each do |fv|
      job_params[:max_inputs].times do
        retry_group = true

        layout_group = layout_generator.next_group(column: column)

        layout_group.each do |r, c|
          existing_part = collection.part(r, c)
          raise "Part #{r} , #{c}, #{layout_group}" if existing_part.nil?

          break if avoid_name(existing_part.sample.name, names_to_avoid)

          collection.set(r, c, fv.sample)
          from_obj_to_obj_provenance(collection.part(r, c), existing_part)
          retry_group = false
        end

        column = layout_generator.iterate_column(column)
        break unless retry_group
      end
    end
  end

  def avoid_name(name, names_to_avoid)
    names_to_avoid.each do |avoid_name|
      return true if name.include?(avoid_name)
    end
    false
  end

  def move_to_station(station)
    show do
      title 'Move to Proper Area'
      note "Please move to the <b>#{station}</b> to complete the following steps"
    end
  end

end

library: {name: RNAExtractionHelper, category: Diagnostic RT-qPCR}
code_source:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/Units'
needs 'Standard Libs/Debug'
needs 'RNA Extraction Kits/RNAExtractionKits'

# Module for elements that are common to RNA Extraction Protocols
#
# @author Devin Strickland <strcklnd@uw.edu>
module RNAExtractionHelper
  include PlanParams
  include Units
  include Debug
  include RNAExtractionKits
  
  def sample_volume(operation)
    operation.temporary[:options][:sample_volume]
  end

end
